OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0+git)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = ERP : Record Signal
0xf8034a49 = Inria
Comment
  The main ERP Recording scenario
Comment
  Modify the lua script in the box to change
  what is displayed and when
Comment
  NOTE: When recording,

  - Acquisition Server must of course be in acquiring state
  - drift correction in acquisition server should be DISABLED
  - remember to check impedances every time
  - do NOT move AS or Designer windows during recording
  - visually check the signal with the other scenario
  to make sure the amp or AS hasn't crashed
  - all boxes marked as debug should be muted during run
  - set the Display Cue Image box to fullscreen
Comment
  These two boxes will pass their stimulations
  directly to the Acquisition Server using TCP Tagging.
  The markers related to rendered cues/audio
  are delayed to be immediately post-stimulus.

  The stimulation filtering is to make sure AS
  doesn't receive the same markers twice.

Timeline generator => #0
  Lua Script = ${Player_ScenarioDirectory}/scripts/experiment-timeline.lua
-> Stimulation Filter "Non-beep"
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Beep
  Stimulation range end = OVTK_StimulationId_Beep
-> 0xc67a01dc Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
  Cue Image 1 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Path_Data}/applications/vr-demo/handball/scene-graz-cross/cross.png
  Stimulation 4 = OVTK_GDF_Cross_On_Screen
  Cue Image 5 = ${Player_ScenarioDirectory}/assets/rest.png
  Stimulation 5 = OVTK_StimulationId_RestStart
#0 -> Stimulation Filter "Beep"
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Beep
  Stimulation range end = OVTK_StimulationId_Beep
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#0 -> 0xc73e83ec Stimulation listener "Debug: Generated timeline"
  Log level to use = Information

Acquisition client => #6
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#6.Signal stream, Stimulations=#6.Stimulations -> 0xc73e83ec Signal display "Debug: display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#6.Experiment information, Input stream 2=#6.Signal stream, Input stream 3=#6.Stimulations, Input stream 4=#6.Channel units -> Generic stream writer "Stream to file"
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov
  Use compression = false
#6.Stimulations -> Stimulation listener "Debug: Timeline finally from server"
  Log level to use = Information
#6.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
