OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Mental Imagery Experiment Stimulator => #1
  Lua Script = /home/ac-inria/work/BCIFeedbackEvaluationExperiment/openvibe/applications/demos/motor-imagery/bci-examples/camille-thesis/1st-experiment/graz-stimulator.lua
  Number of Trials for Each Class = 15
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Third Class = OVTK_GDF_Up
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 4.25
  Feedback Duration (in sec) = 4
  End of Trial Min Duration (in sec) = 1.5
  End of Trial Max Duration (in sec) = 3.5
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#1 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/experiment-1-[$core{date}-$core{time}].ov
  Use compression = true
Stimulations=#2.Output stream 3 -> 0xc67a01dc Graz visualization
  Show instruction = true
  Show feedback = false
  Only positive feedback = false
  Label for Class 1 = OVTK_StimulationId_Label_01
  Label for Class 2 = OVTK_StimulationId_Label_02
  Label for Class 3 = OVTK_StimulationId_Label_03
#1 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
