OpenViBE-Scenario

0xc67a01dc Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
Input stream 2=#0.Output stream 3 -> Identity => #5
Input stream 1=#4, Input stream 2=#5.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
#7.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #12
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
#13.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #18
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #19
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
#19.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #24
Input stream 2=#5.Output stream 2 -> Identity => #25
Stimulations=#25.Output stream 2, Features for class 1=#12, Features for class 2=#18, Features for class 3=#24 -> Classifier trainer
  Strategy to apply = Native
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = /home/ac-inria/work/BCIFeedbackEvaluationExperiment/openvibe/applications/demos/motor-imagery/bci-examples/camille-thesis/1st-experiment/config-classifier-experiment.cfg
  Train trigger = OVTK_StimulationId_Train
  Number of partitions for k-fold test = 7
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
