OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#1, Input stream 2=#0.Signal strea, Input stream 3=#0.Stimulations -> Identity => #2
  0xac367a9c = 6
Signal=#2.Output stream 1, Stimulations=#2.Output stream 3 -> Signal display "filtered signals"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#2.Output stream 2, Stimulations=#2.Output stream 3 -> Signal display "raw signals"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
