OpenViBE-Scenario
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${__volatile_ScenarioDir}/).

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Mental Imagery Experiment Stimulator => #1
  Lua Script = /home/ac-inria/work/BCIFeedbackEvaluationExperiment/openvibe/applications/demos/motor-imagery/bci-examples/camille-thesis/1st-experiment/graz-stimulator.lua
  Number of Trials for Each Class = 15
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Third Class = OVTK_GDF_Up
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 4.25
  Feedback Duration (in sec) = 4
  End of Trial Min Duration (in sec) = 1.5
  End of Trial Max Duration (in sec) = 3.5
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#1 -> Identity => #2
Input stream 1=#2.Output stream 2, Input stream 2=#2.Output stream 3 -> Identity => #3
#3.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #13
  Filename to load configuration from = ${__volatile_ScenarioDir}/motor-imagery-bci-config-classifier.cfg
#13.Classification state -> Simple DSP => #14
  Equation = x
Stimulations=#3.Output stream 2, Class label=#13.Labels, Amplitude=#14 -> 0xc67a01dc Graz visualization
  Show instruction = true
  Show feedback = false
  Only positive feedback = false
  Label for Class 1 = OVTK_StimulationId_Label_01
  Label for Class 2 = OVTK_StimulationId_Label_02
  Label for Class 3 = OVTK_StimulationId_Label_03
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/signals/record-[$core{date}-$core{time}].ov
  Use compression = true
