OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#11.Classification state -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11.Labels -> Stimulation listener
  Log level to use = Information
#11.Classification state -> Simple DSP => #14
  Equation = x
Stimulations=#1.Output stream 2, Class label=#11.Labels, Amplitude=#14 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Only positive feedback = false
  Label for Class 1 = OVTK_StimulationId_Label_01
  Label for Class 2 = OVTK_StimulationId_Label_02
  Label for Class 3 = OVTK_StimulationId_Label_03
