OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

  So for instance, if you want to replace the LDA
  with a SVM classifier, you will have to shift the value by -0.5
  with the simple DSP. Indeed, SVM outputs values from 0 to 1.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Graz Motor Imagery BCI Stimulator => #2
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#1, Input stream 2=#2 -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
Stimulations=#2, Amplitude=#10.Hyperplane distance -> 0xc67a01dc Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false

Simple DSP "With SVM: x-0.5"
  Equation = x-0.5
