OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 30
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Graz Motor Imagery BCI Stimulator => #1
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#1 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-1-[$core{date}-$core{time}].ov
  Use compression = false
Stimulations=#2.Output stream 3 -> 0xc67a01dc Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#2.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
