OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  online scenario
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  The box raised the stimulation
  OVTK_StimulationId_TrainCompleted
  at the end of the training process. This stimulation is
  used to stop the scenario with a Player Controller.

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#5, Input stream 2=#1.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
#7.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #12
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
#13.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #18
Stimulations=#6.Output stream 2, Features for class 1=#12, Features for class 2=#18 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 7
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
