OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE, CreatorVersion=1.2.1+git)
0x8c1fc55b = 1.0
0x9f5c4075 = Neurofeedback example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session of feet motor imagery, and watch the corresponding feedback.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.
Comment
  Filtering in the [16-24Hz] frequency band
  and display
Comment
  Selection of 1sec epochs
  every 0.1sec.
Comment
  Averaging the squared signal
Comment
  Averaging the 4 last epochs
Comment
  Crop the signal between
  Mean + 3 * Variance
  and
  Mean + 6 * Variance
Comment
  This two boxes are configured
  with respect to a previous calibration session.

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Center all values on
  Mean + 3 * Variance
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

GDF file reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/neurofeedback.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Reference Channel
  Channel = Reference
  Channel Matching Method = Smart
-> Channel Selector "Cz"
  Channel List = Cz
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
Data=#4, Stimulations=#1.Output stream 3 -> 0xc67a01dc Signal display "Beta signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#4 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 12.033257
  Max crop value = 40.740842
-> Simple DSP => #11
  Equation = x-26.387050
Data=#11 -> Signal display "Beta power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#11 -> Matrix Display "Beta Power as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
