OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0+git)
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples
Comment
  P300 Magic Card

  Training data collection scenario

  Flashing will start automatically
  after 20 secs
Comment
  Credits:

  The images flashed in this and the other related
  P300 card scenarios were created by zcool,
  http://www.zcool.com.cn/. Please see
  'license.txt' in the image folder for details.
Comment
  Stimulations (experiment timeline) will be sent
  to the Acquisition Server by TCP Tagging
Comment
  File writing block
Comment
  Debug block, not normally used

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Card Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-stimulations-targets.lua
  Card Count = 12
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
Sequence stimulations=#1, Target stimulations=#2 -> P300 Magic Card Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
  Background filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png-offscreen
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png

Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#4.Signal stream, Input stream 2=#4.Stimulations -> 0xc73e83ec Identity => #5
#5.Output stream 1 -> 0xc73e83ec Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> 0xc73e83ec Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> 0xc73e83ec Signal Decimation => #8
  Decimation factor = 4
Input stream 1=#8, Input stream 2=#5.Output stream 2 -> 0xc73e83ec Identity => #9
Data=#9.Output stream 1, Stimulations=#9.Output stream 2 -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#4.Experiment information, Input stream 2=#4.Signal stream, Input stream 3=#4.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/current-[$core{date}-$core{time}].ov
  Use compression = false
#4.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#4.Stimulations -> 0xc73e83ec Stimulation listener
  Log level to use = Information
