OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-magic-card.ov
#0.Output stream 2 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Magic Card Visualisation => #4
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#0.Output stream 4, Features for class 1=#7, Features for class 2=#10 -> 0xc67a01dc Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
