OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-magic-card.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #1
#1.Output stream 1 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #4
  Decimation factor = 4
Input stream 1=#4, Input stream 2=#1.Output stream 2 -> Identity => #5
Input stream 1=#5.Output stream 1, Input stream 2=#5.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#7.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#11.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #13
Features=#13 -> Classifier processor => #14
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#15.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #17
Features=#17 -> Classifier processor => #18
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #19
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#19.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #21
Features=#21 -> Classifier processor => #22
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #23
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#23.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #25
Features=#25 -> Classifier processor => #26
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #27
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#27.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #29
Features=#29 -> Classifier processor => #30
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input stream 1=#10.Hyperplane distance, Input stream 2=#14.Hyperplane distance, Input stream 3=#18.Hyperplane distance, Input stream 4=#22.Hyperplane distance, Input stream 5=#26.Hyperplane distance, Input stream 6=#30.Hyperplane distance -> Identity => #31
Input stream 1=#5.Output stream 1, Input stream 2=#5.Output stream 2 -> Identity => #32
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #33
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#33.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #35
Features=#35 -> Classifier processor => #36
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #37
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#37.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #39
Features=#39 -> Classifier processor => #40
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#41.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #43
Features=#43 -> Classifier processor => #44
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #45
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#45.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #47
Features=#47 -> Classifier processor => #48
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #49
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#49.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #51
Features=#51 -> Classifier processor => #52
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #53
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#53.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #55
Features=#55 -> 0xc67a01dc Classifier processor => #56
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input stream 1=#36.Hyperplane distance, Input stream 2=#40.Hyperplane distance, Input stream 3=#44.Hyperplane distance, Input stream 4=#48.Hyperplane distance, Input stream 5=#52.Hyperplane distance, Input stream 6=#56.Hyperplane distance -> Identity => #57
Classification result 0=#31.Output stream 1, Classification result 1=#31.Output stream 2, Classification result 2=#31.Output stream 3, Classification result 3=#31.Output stream 4, Classification result 4=#31.Output stream 5, Classification result 5=#31.Output stream 6, Classification result 6=#57.Output stream 1, Classification result 7=#57.Output stream 2, Classification result 8=#57.Output stream 3, Classification result 9=#57.Output stream 4, Classification result 10=#57.Output stream 5, Classification result 11=#57.Output stream 6 -> Voting Classifier => #58
  Number of repetitions = 4
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = false
Sequence stimulations=#1.Output stream 2, Target stimulations=#1.Output stream 3, Card selection stimulations=#58 -> P300 Magic Card Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png

Acquisition client => #60
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #62
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Card Generation => #63
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-stimulations-targets.lua
  Card Count = 12
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
Input stream 1=#60.Experiment information, Input stream 2=#60.Signal stream, Input stream 3=#62, Input stream 4=#63 -> Identity => #64
Input stream 1=#64.Output stream 1, Input stream 2=#64.Output stream 2, Input stream 3=#64.Output stream 3, Input stream 4=#64.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/current-[$core{date}-$core{time}].ov
  Use compression = false

Classifier processor
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg

Classifier processor
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
