OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes
Comment
  The Temporal Filter
  and Signal Decimation
  boxes transform the signal
  so you can see what is actually
  used online.
Comment
  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #2
  Decimation factor = 4
Input stream 1=#2, Input stream 2=#0.Signal strea, Input stream 3=#0.Stimulations -> Identity => #3
  0xac367a9c = 6
Data=#3.Output stream 1, Stimulations=#3.Output stream 3 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.Output stream 2, Stimulations=#3.Output stream 3 -> 0xc67a01dc Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
