OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Data Acquisition
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The P300 XDawn scenarios are described in

  http://openvibe.inria.fr/p300-speller-xdawn/
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a spatial
  filter and a classifier for online use.

  When you start this scenario, just press
  the "a" key to start the flash sequence.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. This will
  be repeated 10 times.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Press "a" to Start
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Flashing Sequence => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.100000
  No flash duration (in sec) = 0.050000
  Inter-repetition delay (in sec) = 0.000000
  Inter-trial delay (in sec) = 4.000000
  Avoid neighbor flashing = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-stimulator.cfg
  0xac367a9c = 10
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#3.Experiment information, Input stream 2=#3.Signal stream, Input stream 3=#1, Input stream 4=#2 -> Identity => #4
  0xac367a9c = 6
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3, Input stream 4=#4.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-speller-xdawn-1-[$core{date}-$core{time}].ov
  Use compression = false
Sequence stimulations=#4.Output stream 3, Target stimulations=#4.Output stream 4 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
  0xac367a9c = 3
