OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Spatial Filter Training
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario should be used to train
  the spatial filter using the xDAWN algorithm.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have line in
  the console about eigen values.
  Using a Player Controller the scenario will
  automatically pause at the end of the training.

  If you want details on this values, you should read
  http://www.icp.inpg.fr/~rivetber/Publications/references/Rivet2009a.pdf
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Speller Visualisation => #4
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching "Target Selection" => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#0.Output stream 3, Session signal=#3, Evoked potential epochs=#5.Epoched signal -> 0xc67a01dc xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
  Filter dimension = 3
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Pause
