OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

  Note: in order to run this scenario,
  the spatial filter should have been trained using
  2-train-xDAWN !

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Speller Visualisation => #5
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Target Selection" => #6
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Data=#6.Epoched signal -> Signal display "Target response"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#6.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Non Target Selection" => #10
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#10.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #12
Stimulations=#0.Output stream 4, Features for class 1=#9, Features for class 2=#12 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 20
