OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Online Use
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  You can configure the Flashing Sequence
  and the Target Letter Generation in order to
  instruct the subject to spell a specific word.

  Set the target word in the Lua Stimulator (e.g. "openvibe")
  and adapt the number of trials in the P300 Speller Stimulator
  (e.g. 8 trials for the 8 letters in "openvibe")

  Note: If the number of letter in the chosen word does not match
  the number of trial, you won't be able to train xDAWN and
  the classifier on the recorded data.
Comment
  Overview

  This scenario can be used online once the
  spatial filter and the classifiers are trained.
  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the spatial filter / classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  When you start this scenario, just press
  the "a" key to start the flash sequence.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-xDAWN and 3-train-classifier
  scenarios again on the data you just recorded.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The stimulation part of the scenario is
  similar to scenario 1-acquisition.

  If you keep the Target Letter Generation
  box, you will be able to train the algorithms
  again on the recorded data.
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Each column / row has its
  own specific P300 detection pipeline which
  basically consists in :

  - a Stimulation Based Epoching box to
  select signal following the flash
  - a Classifier Processor to chose whether the
  selected signal is a target or not
Comment
  Finally, the Voting Classifier
  box choses which of the candidate
  column/ row has the P300

Press "a" to Start
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Flashing Sequence => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.100000
  No flash duration (in sec) = 0.050000
  Inter-repetition delay (in sec) = 0.000000
  Inter-trial delay (in sec) = 4.000000
  Avoid neighbor flashing = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-stimulator.cfg
  0xac367a9c = 10
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0xac367a9c = 15
Input stream 1=#3.Experiment information, Input stream 2=#3.Signal stream, Input stream 3=#1, Input stream 4=#2 -> Identity => #4
#4.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #7
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input stream 1=#7, Input stream 2=#4.Output stream 3 -> Identity => #8
  0xac367a9c = 6
Input stream 1=#8.Output stream 1, Input stream 2=#8.Output stream 2 -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #10
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#10.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #13
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #14
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#14.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #17
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #18
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#18.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #21
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #22
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#22.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #25
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #26
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#26.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #29
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #30
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#30.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #33
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input stream 1=#13.Hyperplane distance, Input stream 2=#17.Hyperplane distance, Input stream 3=#21.Hyperplane distance, Input stream 4=#25.Hyperplane distance, Input stream 5=#29.Hyperplane distance, Input stream 6=#33.Hyperplane distance -> Identity => #34
Classification result 0=#34.Output stream 1, Classification result 1=#34.Output stream 2, Classification result 2=#34.Output stream 3, Classification result 3=#34.Output stream 4, Classification result 4=#34.Output stream 5, Classification result 5=#34.Output stream 6 -> Voting Classifier => #35
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#8.Output stream 1, Input stream 2=#8.Output stream 2 -> Identity => #36
Input signal=#36.Output stream 1, Input stimulations=#36.Output stream 2 -> Stimulation based epoching => #37
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#37.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #40
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#36.Output stream 1, Input stimulations=#36.Output stream 2 -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#41.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #44
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#36.Output stream 1, Input stimulations=#36.Output stream 2 -> Stimulation based epoching => #45
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#45.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #48
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#36.Output stream 1, Input stimulations=#36.Output stream 2 -> Stimulation based epoching => #49
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#49.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #52
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#36.Output stream 1, Input stimulations=#36.Output stream 2 -> Stimulation based epoching => #53
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#53.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #56
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#36.Output stream 1, Input stimulations=#36.Output stream 2 -> Stimulation based epoching => #57
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#57.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #60
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input stream 1=#40.Hyperplane distance, Input stream 2=#44.Hyperplane distance, Input stream 3=#48.Hyperplane distance, Input stream 4=#52.Hyperplane distance, Input stream 5=#56.Hyperplane distance, Input stream 6=#60.Hyperplane distance -> Identity => #61
Classification result 0=#61.Output stream 1, Classification result 1=#61.Output stream 2, Classification result 2=#61.Output stream 3, Classification result 3=#61.Output stream 4, Classification result 4=#61.Output stream 5, Classification result 5=#61.Output stream 6 -> Voting Classifier => #62
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Sequence stimulations=#4.Output stream 3, Target stimulations=#4.Output stream 4, Row selection stimulations=#62, Column selection stimulations=#35 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
  0xac367a9c = 3
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3, Input stream 4=#4.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-speller-xdawn-4-[$core{date}-$core{time}].ov
  Use compression = false
