OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.2)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 0/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Temporal Filter
  and Signal Decimation
  boxes transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes
Comment
  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
Data=#3, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
