OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/

  with important notes about timing in

  http://openvibe.inria.fr/using-the-p300-scenarios-inside-openvibe/
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use live signal
  from a headset, replace the connections from
  Generic Stream Reader to connections from
  Acquisition Client.
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #1
#1.Output stream 1 -> Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #4
  Decimation factor = 4
Input stream 1=#4, Input stream 2=#1.Output stream 2 -> Identity => #5
Data=#5.Output stream 1, Stimulations=#5.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Sequence stimulations=#1.Output stream 2, Target stimulations=#1.Output stream 3 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #9
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #10
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Acquisition client => #11
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#11.Experiment information, Input stream 2=#11.Signal stream, Input stream 3=#9, Input stream 4=#10 -> Identity => #12
Input stream 1=#12.Output stream 1, Input stream 2=#12.Output stream 2, Input stream 3=#12.Output stream 3, Input stream 4=#12.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov
  Use compression = false
