OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 2/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  For prerecorded data to test this P300, see

  http://openvibe.inria.fr/datasets/
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/CHANGE_ME.ov
#0.Output stream 2 -> Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
#0.Output stream 3 -> Identity => #4
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#4, Features for class 1=#7, Features for class 2=#10 -> 0xc67a01dc Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 5
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
