OpenViBE-Scenario
Comment
  Switch from file reader
  to Acquisiton client to use it online

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #1
#1.Output stream 1 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #4
  Decimation factor = 4
Input stream 1=#4, Input stream 2=#1.Output stream 2 -> Identity => #5
Input stream 1=#5.Output stream 1, Input stream 2=#5.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#7.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #10
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#11.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #14
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#15.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #18
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #19
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#19.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #22
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #23
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#23.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #26
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #27
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#27.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #30
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input stream 1=#10.Classification state, Input stream 2=#14.Classification state, Input stream 3=#18.Classification state, Input stream 4=#22.Classification state, Input stream 5=#26.Classification state, Input stream 6=#30.Classification state -> Identity => #31
Classification result 0=#31.Output stream 1, Classification result 1=#31.Output stream 2, Classification result 2=#31.Output stream 3, Classification result 3=#31.Output stream 4, Classification result 4=#31.Output stream 5, Classification result 5=#31.Output stream 6 -> Voting Classifier => #32
  Number of repetitions = 4
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#5.Output stream 1, Input stream 2=#5.Output stream 2 -> Identity => #33
Input signal=#33.Output stream 1, Input stimulations=#33.Output stream 2 -> Stimulation based epoching => #34
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#34.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #37
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#33.Output stream 1, Input stimulations=#33.Output stream 2 -> Stimulation based epoching => #38
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#38.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #41
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#33.Output stream 1, Input stimulations=#33.Output stream 2 -> Stimulation based epoching => #42
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#42.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #45
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#33.Output stream 1, Input stimulations=#33.Output stream 2 -> Stimulation based epoching => #46
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#46.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #49
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#33.Output stream 1, Input stimulations=#33.Output stream 2 -> Stimulation based epoching => #50
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#50.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #53
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input signal=#33.Output stream 1, Input stimulations=#33.Output stream 2 -> Stimulation based epoching => #54
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#54.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #57
  Filename to load configuration from =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-classifier-processor.cfg
Input stream 1=#37.Classification state, Input stream 2=#41.Classification state, Input stream 3=#45.Classification state, Input stream 4=#49.Classification state, Input stream 5=#53.Classification state, Input stream 6=#57.Classification state -> Identity => #58
Classification result 0=#58.Output stream 1, Classification result 1=#58.Output stream 2, Classification result 2=#58.Output stream 3, Classification result 3=#58.Output stream 4, Classification result 4=#58.Output stream 5, Classification result 5=#58.Output stream 6 -> Voting Classifier => #59
  Number of repetitions = 4
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Sequence stimulations=#1.Output stream 2, Target stimulations=#1.Output stream 3, Row selection stimulations=#59, Column selection stimulations=#32 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg

Acquisition client => #61
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #63
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #64
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Input stream 1=#61.Experiment information, Input stream 2=#61.Signal strea, Input stream 3=#63, Input stream 4=#64 -> Identity => #65
Input stream 1=#65.Output stream 1, Input stream 2=#65.Output stream 2, Input stream 3=#65.Output stream 3, Input stream 4=#65.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/current-[$core{date}-$core{time}].ov
  Use compression = true
