OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.2)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Scenario description

  This scenario is used for acquisition of the training data necessary to
  train the SSVEP classifiers. In order to run correctly it has to be
  configured by the SSVEP Training Controller box.

  For the detailed description and experimental protocol, please refer to
  the SSVEP Scenario documentation on the OpenViBE website.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  External Stimulator

  This SSVEP scenario needs to run along with
  an external application. The application is run
  automatically after the start of the scenario.

  The stimulator accepts two keyboard commands:

  Pressing <Space> will send a start
  stimulation to the scenario and the experiment will
  begin.

  Pressing <Escape> will quit the
  stimulator and stop the scenario.
Comment
  Connection to the external application

  This box receives commands from the external
  stimulator application through the VRPN
  communication protocol.
Comment
  Configurable box
Comment
  SSVEP Training Controller

  You can configure the SSVEP training through this box. This box also
  configures the next Classifier Training scenario, so it is
  imperative to run this scenario every time you
  change settings in the training protocol. For more detail,
  please read the SSVEP Scenario documentation.

  Goal Sequence A sequence of space-separated numbers. Each number
  represents a flickering object to be marked as a target. The number 0
  represents the No target as in staring to a blank space. Other
  numbers represent indexes of the previously defined frequencies.

  Stimulation duration The duration (in seconds) of the sequence
  during which the targets are flickering.

  Break duration Duration (in seconds) of a break, i.e.: the length
  of the period during which the objects on screen are not flickering.

  Flickering delay The delay (in seconds) between the moment when the
  arrow marking the target to be looked at by the subject appears and the
  beginning of the flickering sequence.

  Training Target size The size of a stimulating object on screen.
  The size is given as a proportion of the size of the window. Thus an
  object of size 0.5;0.5 would have dimensions of length equal to the half
  of the size of the shortest dimension of the window.

  Example of a value for this setting : 0.5;0.5

  Training Targets' positions Positions of the targets on screen.
  There are N+1 targets on screen, where N is the number of stimulated
  frequencies. The first targets corresponds to the target number 0 which is
  not flickering at all. The values are given as relative positions to the
  screen. 0.0;0.0 represents the middle, 1.0;1.0 the top-right corner and
  -1.0;-1.0 the bottom-left corner.

  Example of a value for this setting :
  (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0)
Comment
  Connection to the external application

  The external stimulator is controlled through VRPN
  to display the configured sequence of targets at
  desired moments.

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output 1 -> SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/training-acquisition-controller.lua
  Goal sequence = 0 2 3 1 2 1 0 3 1 2 3 0 2 0 3 1 0 3 1 2 3 0 1 2 1 3 2 0 3 2 0 1
  Stimulation duration = 7
  Break duration = 4
  Flickering delay = 1.000000
  Training Target Size = 0.3;0.3
  Training Targets' Positions = (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0)
#2.Stimulations -> Identity => #3
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#2.New output -> Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5, Input 5=#5, Input 6=#5, Input 7=#5 -> Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
Input stimulations 1=#2.Stimulations, Input stimulations 2=#2.New output -> Stimulation multiplexer => #7
0xc67a01dc Acquisition client => #8
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#8.Experiment information, Input stream 2=#8.Signal stream, Input stream 3=#7 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer
