OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.1.99)
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  			This scenario set is documented in 'http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/'
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

  You can monitor signals from all of the electrodes. Individual
  signals are shown for each channel, as well as FFT power of all channels.
Comment
  Display the signal from all channels

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.250000
-> Spectral analysis => #3
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#3.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
