OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2+git)
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP - Classifier Training CSP
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/file-reader-training.cfg
#0.Output stream 2 -> Channel Selector "!99" => #1
  Channel List = 99
  Action = Reject
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #3
#3.Output stream 2 -> Target Separator => #4
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
#3.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 1 (base)" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 5.20455
  High cut frequency (Hz) = 5.70455
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
Input signal=#6, Input stimulations=#4.Stimulations -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#7.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #11
  Equation = log(1+x)
Input signal=#6, Input stimulations=#4.New output -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#12.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #16
  Equation = log(1+x)
#3.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 1 (1st harmonic)" => #18
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.6591
  High cut frequency (Hz) = 11.1591
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
Input signal=#18, Input stimulations=#4.Stimulations -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#19.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #23
  Equation = log(1+x)
Input stream 1=#11, Input stream 2=#23 -> Feature aggregator => #24
Input signal=#18, Input stimulations=#4.New output -> Stimulation based epoching "SBE" => #25
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#25.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #29
  Equation = log(1+x)
Input stream 1=#16, Input stream 2=#29 -> Feature aggregator => #30
Stimulations=#3.Output stream 2, Features for class 1=#24, Features for class 2=#30 -> Classifier trainer "Trainer for frequency 1" => #31
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #32
#32.Output stream 2 -> Target Separator => #33
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
#32.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2b
-> Temporal filter "Frequency 2 (base)" => #35
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.4166
  High cut frequency (Hz) = 6.9166
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
Input signal=#35, Input stimulations=#33.Stimulations -> Stimulation based epoching "SBE" => #36
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#36.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #40
  Equation = log(1+x)
Input signal=#35, Input stimulations=#33.New output -> Stimulation based epoching "SBE" => #41
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#41.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #45
  Equation = log(1+x)
#32.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1
-> Temporal filter "Frequency 2 (1st harmonic)" => #47
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13.0832
  High cut frequency (Hz) = 13.5832
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
Input signal=#47, Input stimulations=#33.Stimulations -> Stimulation based epoching "SBE" => #48
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#48.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #52
  Equation = log(1+x)
Input stream 1=#40, Input stream 2=#52 -> Feature aggregator => #53
Input signal=#47, Input stimulations=#33.New output -> Stimulation based epoching "SBE" => #54
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#54.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #58
  Equation = log(1+x)
Input stream 1=#45, Input stream 2=#58 -> Feature aggregator => #59
Stimulations=#32.Output stream 2, Features for class 1=#53, Features for class 2=#59 -> Classifier trainer "Trainer for frequency 1" => #60
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-2
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #61
#61.Output stream 2 -> Target Separator => #62
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
#61.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3b
-> Temporal filter "Frequency 3 (base)" => #64
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
Input signal=#64, Input stimulations=#62.Stimulations -> Stimulation based epoching "SBE" => #65
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#65.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #69
  Equation = log(1+x)
Input signal=#64, Input stimulations=#62.New output -> Stimulation based epoching "SBE" => #70
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#70.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #74
  Equation = log(1+x)
#61.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1
-> Temporal filter "Frequency 3 (1st harmonic)" => #76
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input signal=#76, Input stimulations=#62.Stimulations -> Stimulation based epoching "SBE" => #77
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#77.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #81
  Equation = log(1+x)
Input stream 1=#69, Input stream 2=#81 -> Feature aggregator => #82
Input signal=#76, Input stimulations=#62.New output -> Stimulation based epoching "SBE" => #83
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#83.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #87
  Equation = log(1+x)
Input stream 1=#74, Input stream 2=#87 -> Feature aggregator => #88
Stimulations=#61.Output stream 2, Features for class 1=#82, Features for class 2=#88 -> 0xc67a01dc Classifier trainer "Trainer for frequency 1" => #89
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-3
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
New input[0]=#31, New input[1]=#60, New input[2]=#89 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
