OpenViBE-Scenario(FormatVersion=1, Creator=Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Performance Test
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  This scenario calculates the confusion matrix over
  several classes for SSVEP performance testing.

  By default it loads the file specified for testing in the
  configuration scenario.
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency

Generic stream reader => #0
  Filename = /opt/openvibe/trunk/dist/share/openvibe-scenarios/signals/ssvep-record-current.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/file-reader-testing.cfg
#0.Output stream 2 -> Channel Selector => #1
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> Identity => #3
-> Identity => #4
-> Spatial Filter 1b
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 1 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #10
  Equation = log(1+x)
#4 -> Spatial Filter 1h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 1 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #16
  Equation = log(1+x)
Input stream 1=#10, Input stream 2=#16 -> Feature aggregator => #17
Features=#17 -> Classifier processor => #18
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1
#3 -> Identity => #19
-> Spatial Filter 2b
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2b
-> Temporal filter "Frequency 2 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #25
  Equation = log(1+x)
#19 -> Spatial Filter 2h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1
-> Temporal filter "Frequency 2 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #31
  Equation = log(1+x)
Input stream 1=#25, Input stream 2=#31 -> Feature aggregator => #32
Features=#32 -> Classifier processor => #33
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2
#3 -> Identity => #34
-> Spatial Filter 3b
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3b
-> Temporal filter "Frequency 3 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #40
  Equation = log(1+x)
#34 -> Spatial Filter 3h1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #46
  Equation = log(1+x)
Input stream 1=#40, Input stream 2=#46 -> Feature aggregator => #47
Features=#47 -> Classifier processor => #48
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3
New input[0]=#18.Labels, New input[1]=#33.Labels, New input[2]=#48.Labels -> Classifier combination => #49
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 3
#2.Output stream 2 -> Identity => #50
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
New input[0]=#50, New input[1]=#49 -> Confusion Matrix Calculator
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix.lua
  Class count = 4
