OpenViBE-Scenario
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Online Test - Shooter
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  Configurable box
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Note: The results of the classifier are only used if the
   SSVEP_AdvancedControl is set to false

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 3
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-mind-shooter --run-bg impact-shooter ${Player_ScenarioDirectory}

VRPN Target Request => #2
  Peripheral name = SSVEP_VRPN_TargetRequest@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> 0xc67a01dc SSVEP Shooter Controller => #3
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-controller.lua
  Target Types = 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6
  Target Positions = 0 1 0 1 0 1 0 1 0 1
  Target Lockdown = false
  Pilot Assist = true
  Display Feedback = true
  One By One = false
Stimulation stream 1=#2, Stimulation stream 2=#3 -> Stimulation listener
  Log level to use = Information
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3, Input 5=#3, Input 6=#3, Input 7=#3, Input 8=#3 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = SSVEP_VRPN_TargetControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07
Scenario Control => #6
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#6.Output 1 -> Button Simplifier
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-button-simplifier.lua
-> Identity => #8
Input stimulations 1=#8, Input stimulations 2=#3 -> Stimulation multiplexer => #9
Input 1=#8, Input 2=#9, Input 3=#8, Input 4=#8 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#6.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Acquisition client => #12
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#12.Signal strea -> Channel Selector
  Channel List = 99
  Action = Reject
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Identity => #14
-> Identity => #15
-> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 1 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #21
  Equation = log(1+x)
#15 -> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 1 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #27
  Equation = log(1+x)
Input stream 1=#21, Input stream 2=#27 -> Feature aggregator
-> Classifier processor => #29
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#14 -> Identity => #30
-> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 2 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #36
  Equation = log(1+x)
#30 -> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 2 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #42
  Equation = log(1+x)
Input stream 1=#36, Input stream 2=#42 -> Feature aggregator
-> Classifier processor => #44
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#14 -> Identity => #45
-> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 3 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #51
  Equation = log(1+x)
#45 -> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #57
  Equation = log(1+x)
Input stream 1=#51, Input stream 2=#57 -> Feature aggregator
-> Classifier processor => #59
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
New input[0]=#29.Labels, New input[1]=#44.Labels, New input[2]=#59.Labels -> SSVEP Voter => #60
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-combination-classifier.lua
  Class count = 3
Input 1=#60, Input 2=#60, Input 3=#60 -> Button VRPN Server "VRPN Ship Control"
  Peripheral name = SSVEP_VRPN_ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
Input 1=#29.Classification state, Input 2=#44.Classification state, Input 3=#59.Classification state -> Analog VRPN Server
  Peripheral name = SSVEP_VRPN_Feedback
