OpenViBE-Scenario
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Performance Test
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  This scenario calculates the confusion matrix over
  several classes for SSVEP performance testing.

  By default it loads the file specified for testing in the
  configuration scenario.
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency

Generic stream reader => #0
  Filename = /opt/openvibe/trunk/dist/share/openvibe-scenarios/signals/ssvep-record-current.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/file-reader-testing.cfg
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Identity => #2
-> Identity => #3
-> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 1 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #9
  Equation = log(1+x)
#3 -> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 1 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #15
  Equation = log(1+x)
Input stream 1=#9, Input stream 2=#15 -> Feature aggregator
-> Classifier processor => #17
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#2 -> Identity => #18
-> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 2 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #24
  Equation = log(1+x)
#18 -> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 2 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #30
  Equation = log(1+x)
Input stream 1=#24, Input stream 2=#30 -> Feature aggregator
-> Classifier processor => #32
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#2 -> Identity => #33
-> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1b
-> Temporal filter "Frequency 3 b"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #39
  Equation = log(1+x)
#33 -> Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1
-> Temporal filter "Frequency 3 h1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #45
  Equation = log(1+x)
Input stream 1=#39, Input stream 2=#45 -> Feature aggregator
-> Classifier processor => #47
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
New input[0]=#17.Labels, New input[1]=#32.Labels, New input[2]=#47.Labels -> Performance SSVEP Classifier => #48
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-classifier.lua
  Class count = 3
#1.Output stream 2 -> Identity => #49
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
New input[0]=#49, New input[1]=#48 -> Confusion Matrix Calculator
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix.lua
  Class count = 4
