OpenViBE-Scenario
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  			This scenario set is documented in 'http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/'
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

  You can monitor signals from all of the electrodes. Individual signals are shown for each
  channel, as well as output of the two spatial filters used and the FFT
  of the average of all channels.
Comment
  Display the signal from
  all useful channels for SSVEP

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal strea -> Identity => #1
#1.Output stream 1 -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Signal=#2 -> Signal display "Channel Display"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1.Output stream 1 -> 0xc67a01dc Univariate Statistics => #4
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#4.Mean -> 0xc67a01dc Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.500000
-> 0xc67a01dc Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0xc67a01dc Spectral analysis => #8
  Spectral components = Amplitude
#8.Amplitude -> 0xc67a01dc FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
