OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE, CreatorVersion=1.2.2+git)
0x790d75b8 = Jussi T. Lindgren, Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Training - Acquisition
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  Launch the stimulator application
Comment
  Configurable box
Comment
  Classified focus conditions:

  0 = middle of ship (nothing)
  1 = tip (fire gun)
  2 = left (move)
  3 = right (move)
Comment
  After rendering, the application will send the
  events to the Acquisition Server by TCP Tagging.
  The server aligns the stimulations to the signal.
Comment
  The experiment timeline
  (requested events, flicker on/off, etc)
  will be forwarded to the application via VRPN

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output 1 -> 0xc67a01dc SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/training-acquisition-controller.lua
  Focus sequence = 2 3 1 0 3 0 1 2 0 2 1 3 2 1 3 0 3 2 0 1
  Stimulation Duration = 7
  Break Duration = 2
  Flickering Delay = 3.5
  Epoching Delay = 1.0
#2.Stimulations -> Identity => #3
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#2.New output -> Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5, Input 5=#5, Input 6=#5, Input 7=#5 -> Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_TargetControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-mind-shooter --run-bg impact-trainer ${Player_ScenarioDirectory}

Acquisition client => #9
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 2=#9.Signal stream, Input stream 3=#9.Stimulations -> Generic stream writer
  Filename = Will-be-overridden
  Use compression = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/file-writer.cfg
Input stream 2=#9.Signal stream, Input stream 3=#9.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
  Use compression = false
