OpenViBE-Scenario
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP CSP Training
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  Signal processing for the third stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency

Generic stream reader => #0
  Filename =
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/file-reader-training.cfg
#0.Output stream 2 -> Channel Selector => #1
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #3
#3.Output stream 1 -> Temporal filter "Frequency 1 (base)" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
#3.Output stream 2 -> Target Separator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#4, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#4, Input stimulations=#5.New output -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#3.Output stream 2, Signal condition 1=#6.Epoched signal, Signal condition 2=#7.Epoched signal -> CSP Spatial Filter Trainer 1 => #8
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1b
  Filter dimension = 3
  Save as box config = true
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/csp-spatial-filter-trainer-1b.cfg
#3.Output stream 1 -> Temporal filter "Frequency 1 (1st harmonic)" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
Input signal=#9, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE" => #10
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#9, Input stimulations=#5.New output -> Stimulation based epoching "SBE" => #11
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#3.Output stream 2, Signal condition 1=#10.Epoched signal, Signal condition 2=#11.Epoched signal -> CSP Spatial Filter Trainer 1h => #12
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1h1
  Filter dimension = 3
  Save as box config = true
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/csp-spatial-filter-trainer-1h1.cfg
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #13
#13.Output stream 1 -> Temporal filter "Frequency 2 (base)" => #14
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
#13.Output stream 2 -> Target Separator => #15
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#14, Input stimulations=#15.Stimulations -> Stimulation based epoching "SBE" => #16
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#14, Input stimulations=#15.New output -> Stimulation based epoching "SBE" => #17
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#13.Output stream 2, Signal condition 1=#16.Epoched signal, Signal condition 2=#17.Epoched signal -> CSP Spatial Filter Trainer 2 => #18
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1b
  Filter dimension = 3
  Save as box config = true
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/csp-spatial-filter-trainer-2b.cfg
#13.Output stream 1 -> Temporal filter "Frequency 2 (1st harmonic)" => #19
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
Input signal=#19, Input stimulations=#15.Stimulations -> Stimulation based epoching "SBE" => #20
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#19, Input stimulations=#15.New output -> Stimulation based epoching "SBE" => #21
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#13.Output stream 2, Signal condition 1=#20.Epoched signal, Signal condition 2=#21.Epoched signal -> CSP Spatial Filter Trainer 2h => #22
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1h1
  Filter dimension = 3
  Save as box config = true
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/csp-spatial-filter-trainer-2h1.cfg
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #23
#23.Output stream 1 -> Temporal filter "Frequency 3 (base)" => #24
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
#23.Output stream 2 -> Target Separator => #25
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#24, Input stimulations=#25.Stimulations -> Stimulation based epoching "SBE" => #26
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#24, Input stimulations=#25.New output -> Stimulation based epoching "SBE" => #27
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#23.Output stream 2, Signal condition 1=#26.Epoched signal, Signal condition 2=#27.Epoched signal -> CSP Spatial Filter Trainer 3 => #28
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1b
  Filter dimension = 3
  Save as box config = true
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/csp-spatial-filter-trainer-3b.cfg
#23.Output stream 1 -> Temporal filter "Frequency 3 (1st harmonic)" => #29
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input signal=#29, Input stimulations=#25.Stimulations -> Stimulation based epoching "SBE" => #30
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#29, Input stimulations=#25.New output -> Stimulation based epoching "SBE" => #31
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#23.Output stream 2, Signal condition 1=#30.Epoched signal, Signal condition 2=#31.Epoched signal -> CSP Spatial Filter Trainer 3h => #32
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1h1
  Filter dimension = 3
  Save as box config = true
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/csp-spatial-filter-trainer-3h1.cfg
New input[0]=#8, New input[1]=#12, New input[2]=#18, New input[3]=#22, New input[4]=#28, New input[5]=#32 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
