OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2+git)
0x790d75b8 = Jussi T. Lindgren, Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP CSP Training
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  This scenario trains a classifier using the
  CSP filters learned in the previous scenario. Note
  that if the same training data is used that
  was used to learn the filters, the reported
  cross-validation accuracies will be optimistic.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
#0.Output stream 2 -> Channel Selector "!99" => #1
  Channel List = 99
  Action = Reject
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> Temporal filter "Frequency 1 (base)" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
#2.Output stream 1 -> Temporal filter "Frequency 1 (1st harmonic)" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
#2.Output stream 1 -> Temporal filter "Frequency 2 (base)" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
#2.Output stream 1 -> Temporal filter "Frequency 2 (1st harmonic)" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23.75
  High cut frequency (Hz) = 24.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
#2.Output stream 1 -> Temporal filter "Frequency 3 (base)" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
#2.Output stream 1 -> Temporal filter "Frequency 3 (1st harmonic)" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.75
  High cut frequency (Hz) = 30.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input 1=#3, Input 2=#4, Input 3=#5, Input 4=#6, Input 5=#7, Input 6=#8 -> Signal Merger
-> Spatial Filter "Multiclass CSP" => #10
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file = ${Player_ScenarioDirectory}/classifiers/csp-filters.cfg
#2.Output stream 2 -> Identity => #11
Input signal=#10, Input stimulations=#11 -> 0xc67a01dc Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#12.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #17
#11 -> Identity => #18
Triggers=#18, Matrix=#17 -> Stream Switch => #19
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
  Switch stim for output 3 = OVTK_StimulationId_Label_02
  Switch stim for output 4 = OVTK_StimulationId_Label_03
Stimulations=#18, Features for class 1=#19.Output[0], Features for class 2=#19.Output[1], Features for class 3=#19.New output[2], Features for class 4=#19.New output[3] -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/ssvep-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Class 3 label = OVTK_StimulationId_Label_02
  Class 4 label = OVTK_StimulationId_Label_03
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
