OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2+git)
0x790d75b8 = Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Online Test - Shooter
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  This pipeline starts the game app
Comment
  This pipeline generates the enemy target ship
  sequence for the game and sends them over
  VRPN. It also stops the scenario eventually.
Comment
  This scenario uses the previously built CSP and
  classifier for BCI control of the Mind Shooter!
Comment
  This pipeline sends classifier predictions
  to the Mind Shooter game
Comment
  Configurable box
Comment
  Note: The label predictions of the classifier are only used if the
   SSVEP_AdvancedControl is set to false.
  Otherwise the class probabilities are used.

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 3
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-mind-shooter --run-bg impact-shooter ${Player_ScenarioDirectory}

VRPN Target Request => #2
  Peripheral name = SSVEP_VRPN_TargetRequest@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> SSVEP Shooter Controller => #3
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-controller.lua
  Target Types = 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6 4 5 6
  Target Positions = 0 1 0 1 0 1 0 1 0 1
  Target Lockdown = false
  Pilot Assist = true
  Display Feedback = true
  One By One = false
Stimulation stream 1=#2, Stimulation stream 2=#3 -> 0xc73e83ec Stimulation listener "TIMELINE"
  Log level to use = Information
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3, Input 5=#3, Input 6=#3, Input 7=#3, Input 8=#3 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = SSVEP_VRPN_TargetControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07
Scenario Control => #6
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#6.Output 1 -> Button Simplifier
  Lua Script = ${Player_ScenarioDirectory}/scripts/shooter-button-simplifier.lua
-> Identity => #8
Input stimulations 1=#8, Input stimulations 2=#3 -> Stimulation multiplexer => #9
Input 1=#8, Input 2=#9, Input 3=#8, Input 4=#8 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#6.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Acquisition client => #12
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#12.Signal stream -> Channel Selector "!99"
  Channel List = 99
  Action = Reject
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Identity => #14
-> Temporal filter "Frequency 2 (base)" => #15
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
#14 -> Temporal filter "Frequency 3 (base)" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
#14 -> Temporal filter "Frequency 1 (base)" => #17
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
#14 -> Temporal filter "Frequency 1 (1st harmonic)" => #18
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
#14 -> Temporal filter "Frequency 2 (1st harmonic)" => #19
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23.75
  High cut frequency (Hz) = 24.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
#14 -> Temporal filter "Frequency 3 (1st harmonic)" => #20
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.75
  High cut frequency (Hz) = 30.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input 1=#17, Input 2=#18, Input 3=#15, Input 4=#19, Input 5=#16, Input 6=#20 -> Signal Merger
-> Spatial Filter "Multiclass CSP"
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file = ${Player_ScenarioDirectory}/classifiers/csp-filters.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #27
Features=#27 -> Classifier processor => #28
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/ssvep-classifier.cfg
#28.Labels -> 0xc73e83ec Stimulation listener "CLASSIFIER"
  Log level to use = Information
#28.Labels -> Stimulation Filter => #30
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
#28.Labels -> Stimulation Filter => #31
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#28.Labels -> Stimulation Filter => #32
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
Input 1=#30, Input 2=#31, Input 3=#32 -> Button VRPN Server "VRPN Ship Control"
  Peripheral name = SSVEP_VRPN_ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
#28.Probability values -> Advanced VRPN Ship Control
  Peripheral name = SSVEP_VRPN_Feedback

0xc73e83ec Generic stream reader => #35
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
#35.Output stream 2 -> 0xc73e83ec Stimulation listener "FILE"
  Log level to use = Information
