OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE, CreatorVersion=1.2.2+git)
0x790d75b8 = Jussi T. Lindgren, Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Performance Test
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  This scenario calculates the confusion matrix over
  several classes for SSVEP performance testing.

  By default it loads the file specified for testing in the
  configuration scenario.

  Note that if you use the same file for training
  and testing, the results are likely very optimistic.

  n.b. The scenario does not test the numeric
  probability outputs that drive the Mind Shooter
  in the analog control mode. Only discrete
  control is tested.
Comment
  Targets 0-2 are the flickers,
  target 3 should be 'middle of the ship'

Generic stream reader => #0
  Filename = Will-be-overriden
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/file-reader-testing.cfg
#0.Output stream 3 -> Identity => #1
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output stream 2 -> Channel Selector "!99"
  Channel List = 99
  Action = Reject
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Identity => #4
-> Temporal filter "Frequency 2 (base)" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
#4 -> Temporal filter "Frequency 3 (base)" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
#4 -> Temporal filter "Frequency 1 (base)" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
#4 -> Temporal filter "Frequency 1 (1st harmonic)" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
#4 -> Temporal filter "Frequency 2 (1st harmonic)" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23.75
  High cut frequency (Hz) = 24.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
#4 -> Temporal filter "Frequency 3 (1st harmonic)" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.75
  High cut frequency (Hz) = 30.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input 1=#7, Input 2=#8, Input 3=#5, Input 4=#9, Input 5=#6, Input 6=#10 -> Signal Merger
-> Spatial Filter "Multiclass CSP" => #12
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file = ${Player_ScenarioDirectory}/classifiers/csp-filters.cfg
Input signal=#12, Input stimulations=#1 -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #18
Features=#18 -> Classifier processor => #19
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/ssvep-classifier.cfg
New input[0]=#1, New input[1]=#19.Labels -> Confusion Matrix Calculator
  Lua Script = ${Player_ScenarioDirectory}/scripts/performance-test-confusion-matrix.lua
  Class count = 4
#19.Labels -> 0x341d3912 0xc73e83ec Stimulation listener "CLASSIFIER"
  Log level to use = Information
#0.Output stream 3 -> 0x341d3912 0xc73e83ec Stimulation listener "FILE"
  Log level to use = Information
