OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE, CreatorVersion=1.2.1+git)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session of feet motor imagery, and watch the corresponding feedback.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-spaceship to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  VRPN
  The button Server tells the spaceship application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.

GDF file reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/spaceship-freetime.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 4.246961
  Max crop value = 12.595946
-> Simple DSP => #8
  Equation = x-8.421453
-> Analog VRPN server
  Peripheral name = openvibe-vrpn
Data=#8 -> 0xc67a01dc Signal display "Beta power"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#2, Stimulations=#1.Output stream 3 -> Signal display "Beta signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input 1=#1.Output stream 3, Input 2=#1.Output stream 3, Input 3=#1.Output stream 3, Input 4=#1.Output stream 3, Input 5=#1.Output stream 3, Input 6=#1.Output stream 3, Input 7=#1.Output stream 3 -> Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
  Button 3 ON = OVTK_StimulationId_Label_04
  Button 3 OFF = OVTK_StimulationId_Label_05
  Button 4 ON = OVTK_GDF_Stage_1
  Button 4 OFF = OVTK_StimulationId_Label_0C
  Button 5 ON = OVTK_GDF_Stage_2
  Button 5 OFF = OVTK_StimulationId_Label_0D
  Button 6 ON = OVTK_GDF_Stage_3
  Button 6 OFF = OVTK_StimulationId_Label_0E
  Button 7 ON = OVTK_GDF_Stage_4
  Button 7 OFF = OVTK_StimulationId_Label_0F
