OpenViBE-Scenario
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

Brainamp file reader => #0
  Filename (header) = $ENV{OV_CONVERT_SRC}
  Epoch size (in sec) = 0.0625
#0.EEG stream -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.EEG stream -> 0xc67a01dc CSV File Writer
  Filename = $ENV{OV_CONVERT_DEST}
  Column separator = ;
  Precision = 10
