OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = OpenViBE to TCP/IP tutorial
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  This scenario shows how to send data out from Designer to a TCP/IP client

  Its used together with openvibe-examples-openvibe-to-tcpip application.

  First, start the scenario, and then the application. Then, press a key 'a'
  in the Keyboard Stimulator window to see it printed on the side of
  the client along with the number of signal bytes received so far.

Sinus oscillator => #0
  Channel count = 5
  Sampling frequency = 256
  Generated epoch sample count = 32
-> 0xc67a01dc Signal to TCP
  Port = 5678
  Output format = Raw
Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
  TCP Tagging Host address =
  TCP Tagging Host port = 15361
Data=#0, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2 -> Stimuli to TCP
  Port = 5679
  Output format = String
