OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x9f5c4075 = OpenViBE to VRPN tutorial
0xf36a1567 = http://openvibe.inria.fr/vrpn-tutorial-sending-data-from-openvibe-to-an-external-application/
0xf6b2e3fa = Examples
0xf8034a49 = Inria
Comment
  This scenario is described in

  http://openvibe.inria.fr/vrpn-tutorial-sending-data-from-openvibe-to-an-external-application/

  Its used together with openvibe-examples-openvibe-to-vrpn application.

Sinus oscillator => #0
  Channel count = 1
  Sampling frequency = 1
  Generated epoch sample count = 1
-> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Data=#0, Stimulations=#2 -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input 1=#2, Input 2=#2 -> Button VRPN Server
  Peripheral name = openvibe_vrpn_button
  Button 1 ON = OVTK_StimulationId_Label_01
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_00
