OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)

External Processing => #0
  Launch third party program = false
  Executable path =
  Arguments =
  Port = 49152
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = true
#0.New output[0] -> Temporal Filter => #1
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#1, Stimulations=#0.New output[1] -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.New output[1] -> Stimulation listener "Stims"
  Log level to use = Information
#0.New output[1] -> 0x341d3912 Signals
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
#0.New output[1] -> StimStream
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
#0.New output[1] -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

0x341d3912 Generic stream reader
  Filename = E:/ovm2/dist/extras-Debug/share/openvibe/scenarios/signals/bci-motor-imagery.ov

0x341d3912 Clock stimulator
  Interstimulation interval (in sec) = 2.0
  Stimulation = OVTK_StimulationId_Label_00

0x341d3912 HelloWorld
  Frequency (Hz) = 1.0
  My greeting = Hello World!
