OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)

0x341d3912 Generic stream reader
  Filename = E:/ovm2/dist/extras-Debug/share/openvibe/scenarios/signals/bci-motor-imagery.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#2, Stimulations=#1.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1.Signal stream -> 0x341d3912 Signals
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
#1.Stimulations -> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = false
  Number of values in expanded blocks = 4
#1.Stimulations -> Stimulation listener "Stims"
  Log level to use = Information
#1.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

0x341d3912 Clock stimulator
  Interstimulation interval (in sec) = 2.0
  Stimulation = OVTK_StimulationId_Label_00

0x341d3912 HelloWorld
  Frequency (Hz) = 1.0
  My greeting = Hello World!
