OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${toGDF}.ov
#0.Output stream 4 -> Lua Stimulator => #1
  Lua script = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-stimuli-converter.lua
  Original row base = OVTK_StimulationId_Label_01
  Original column base = OVTK_StimulationId_Label_07
  New row base = OVTK_StimulationId_Label_0D
  New column base = OVTK_StimulationId_Label_13
Input stimulations 1=#0.Output stream 3, Input stimulations 2=#1 -> Stimulation multiplexer => #2
Experiment information=#0.Output stream 1, Signal=#0.Output stream 2, Stimulation=#2 -> GDF file writer
  Filename = ${toGDF}.gdf
0xc67a01dc Press "a" to Start => #4
  Filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stimulations 1=#2, Input stimulations 2=#4 -> Stimulation multiplexer
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
