OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples_CoAdapt}/signals/oddball/${TrainFile}.ov
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/${SubjectName}/${paramFile}-spatial-filter.cfg
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Serial Speller Visualisation => #5
  Interface filename = ../share/coadapt/openvibe-plugins/simple-visualisation/p300-serial-speller.ui
  Stimulation base = OVTK_StimulationId_Label_01
  Flash background color = 10,10,10
  Flash foreground color = 92,5,5
  Flash font size = 100
  Target background color = 10,10,65
  Target foreground color = 29,9,9
  Target font size = 100
  Correct selected background color = 0,37,0
  Correct selected foreground color = 29,9,9
  Correct selected font size = 100
  Wrong selected background color = 92,5,5
  Wrong selected foreground color = 29,9,9
  Wrong selected font size = 250
  Result font size = 20
  Letters group filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-symbols.xml
  Number of feedback color steps = 1000
  Feedback color significance level = 0.05
  Feedback color rate = 1.03
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Target Selection" => #6
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#6.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
-> Feature aggregator => #8
#6.Epoched signal -> Epoch average => #9
  Averaging type = Cumulative average
  Epoch count = 1
Signal=#9 -> Signal display "Target Response"
  Time Scale = 0.600000
  Display Mode = Scan
  Manual Vertical Scale = true
  Vertical Scale = 10
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Non Target Selection" => #11
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#11.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
-> Feature aggregator => #13
Stimulations=#0.Output stream 4, Features for class 1=#8, Features for class 2=#13 -> Classifier trainer
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-Nice/${SubjectName}/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 20
#11.Epoched signal -> 0xc67a01dc Epoch average => #15
  Averaging type = Cumulative average
  Epoch count = 1
Signal=#15 -> 0xc67a01dc Signal display "NonTarget Response"
  Time Scale = 0.600000
  Display Mode = Scan
  Manual Vertical Scale = true
  Vertical Scale = 10

Press "a" to Start
  Filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
