OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples_CoAdapt}/signals/oddball/${TrainFile}.ov
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Serial Speller Visualisation => #4
  Interface filename = ../share/coadapt/openvibe-plugins/simple-visualisation/p300-serial-speller.ui
  Stimulation base = OVTK_StimulationId_Label_01
  Flash background color = 10,10,10
  Flash foreground color = 92,5,5
  Flash font size = 100
  Target background color = 10,10,65
  Target foreground color = 29,9,9
  Target font size = 100
  Correct selected background color = 0,37,0
  Correct selected foreground color = 29,9,9
  Correct selected font size = 100
  Wrong selected background color = 92,5,5
  Wrong selected foreground color = 29,9,9
  Wrong selected font size = 250
  Result font size = 20
  Letters group filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-symbols.xml
  Number of feedback color steps = 1000
  Feedback color significance level = 0.05
  Feedback color rate = 1.03
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching "Target Selection" => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#0.Output stream 3, Session signal=#3, Evoked potential epochs=#5.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-Nice/${SubjectName}/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
