OpenViBE-Scenario

Keyboard stimulator => #0
  Filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/simple-keyboard-to-stimulations.txt
-> Lua Stimulator => #1
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-sequence-stimulator.lua
  Start Stimulation = OVTK_StimulationId_Label_00
  Base Stimulation = OVTK_StimulationId_Label_01
  Number min of repetitions = 1
  Number max of repetition = 1
  Number of trial = 1
  Flash duration = 0.15
  No Flash duration = 0.15
  Inter repetition delay = 0
  Inter trial delay = 4
  Symbol list = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-symbols.xml
-> Target Letter Generation => #2
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-target-stimulator.lua
  Word to Spell (leave this empty if random) = X
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
  Symbol list = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-symbols.xml
Sequence stimulations=#1, Target stimulations=#2 -> P300 Serial Speller Visualisation => #3
  Interface filename = ../share/coadapt/openvibe-plugins/simple-visualisation/p300-serial-speller.ui
  Stimulation base = OVTK_StimulationId_Label_01
  Flash background color = 10,10,10
  Flash foreground color = 92,5,5
  Flash font size = 100
  Target background color = 10,10,65
  Target foreground color = 29,9,9
  Target font size = 100
  Correct selected background color = 0,37,0
  Correct selected foreground color = 29,9,9
  Correct selected font size = 100
  Wrong selected background color = 92,5,5
  Wrong selected foreground color = 29,9,9
  Wrong selected font size = 250
  Result font size = 20
  Letters group filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-symbols.xml
  Number of feedback color steps = 1000
  Feedback color significance level = 0.05
  Feedback color rate = 1.03
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#5.Signal strea -> Channel Selector => #6
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Index
Input stream 1=#5.Experiment information, Input stream 2=#6, Input stream 3=#1, Input stream 4=#2 -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/oddball/p300_${SubjectName}_$core{date}_$core{time}.ov
  Use compression = true
#5.Signal strea -> Channel Selector
  Channel List = Pz
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Signal Decimation => #10
  Decimation factor = 4
Input signal=#10, Input stimulations=#3 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
#11.Epoched signal -> Epoch average => #12
  Averaging type = Cumulative average
  Epoch count = 4
Input signal=#10, Input stimulations=#3 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#13.Epoched signal -> Epoch average => #14
  Averaging type = Cumulative average
  Epoch count = 4
input1=#12, input2=#14 -> Two-sample t-test
New input[0]=#12, New input[1]=#14, New input[2]=#1 -> 0xc67a01dc Python scripting
  Clock frequency (Hz) = 2
  Script = ${Path_Samples_CoAdapt}/bci/p300-Nice/plot_erp.py
  stimulus = OVTK_StimulationId_ExperimentStop
  file_name = ${Path_Samples_CoAdapt}/signals/oddball/p300_${SubjectName}_$core{date}_$core{time}.png
