OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

  Note: in order to run this scenario,
  the spatial filter should have been trained using
  2-train-xDAWN !

Generic stream reader => #0
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/${TrainFile}.ov
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/${SubjectName}/${paramFile}-spatial-filter.cfg
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Speller Visualisation Splotch => #5
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 100
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 100
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 100
  Wrongly selected background color = 70,20,20
  Wrongly selected foreground color = 30,10,10
  Wrongly selected font size = 100
  Result font size = 20
  Letters group filename =
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-speller-visualisation.cfg
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Target Selection" => #6
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#6.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
-> Feature aggregator => #8
#6.Epoched signal -> Epoch average => #9
  Averaging type = Cumulative average
  Epoch count = 1
Signal=#9 -> Signal display "Target Response"
  Time Scale = 0.600000
  Display Mode = Scan
  Manual Vertical Scale = true
  Vertical Scale = 10
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Non Target Selection" => #11
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#11.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
-> Feature aggregator => #13
Stimulations=#0.Output stream 3, Features for class 1=#8, Features for class 2=#13 -> 0xc67a01dc Classifier trainer
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-Nice/${SubjectName}/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 20
#11.Epoched signal -> Epoch average => #15
  Averaging type = Cumulative average
  Epoch count = 1
Signal=#15 -> Signal display "NonTarget Response"
  Time Scale = 0.600000
  Display Mode = Scan
  Manual Vertical Scale = true
  Vertical Scale = 10

Press "a" to Start
  Filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
