OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  You can configure the Flashing Sequence
  and the Target Letter Generation in order to
  instruct the subject to spell a specific word.

  Set the target word in the Lua Stimulator (e.g. "openvibe")
  and adapt the number of trials in the P300 Speller Stimulator
  (e.g. 8 trials for the 8 letters in "openvibe")

  Note: If the number of letter in the chosen word does not match
  the number of trial, you won't be able to train xDAWN and
  the classifier on the recorded data.
Comment
  Overview

  This scenario can be used online once the
  spatial filter and the classifiers are trained.
  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the spatial filter / classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  When you start this scenario, just press
  the "a" key to start the flash sequence.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-xDAWN and 3-train-classifier
  scenarios again on the data you just recorded.

  note: the recorded files go to the
  ${Path_Samples}/signals folder.
Comment
  The stimulation part of the scenario is
  similar to scenario 1-acquisition.

  If you keep the Target Letter Generation
  box, you will be able to train the algorithms
  again on the recorded data.
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Each column / row has its
  own specific P300 detection pipeline which
  basically consists in :

  - a Stimulation Based Epoching box to
  select signal following the flash
  - a Classifier Processor to chose whether the
  selected signal is a target or not
Comment
  Finally, the Voting Classifier
  box choses which of the candidate
  column/ row has the P300

Press "a" to Start => #0
  Filename = ${Path_Samples_CoAdapt}/bci/p300-Nice/simple-keyboard-to-stimulations.txt
  0xac367a9c = 12
-> Flashing Sequence => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.100000
  No flash duration (in sec) = 0.050000
  Inter-repetition delay (in sec) = 0.000000
  Inter-trial delay (in sec) = 4.000000
  Avoid neighbor flashing = false
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-speller-stimulator.cfg
  0xac367a9c = 90
-> Target Letter Generation => #2
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-speller-target.lua
  Word to Spell (leave this empty if random) = ${WordToSpell}
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
  0xac367a9c = 80
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
  0xac367a9c = 33
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0xac367a9c = 100
#4.Signal strea -> Channel Selector => #5
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Index
  0xac367a9c = 35
Input stream 1=#4.Experiment information, Input stream 2=#5, Input stream 3=#1, Input stream 4=#2 -> Identity => #6
  0xac367a9c = 65
#6.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
  0xac367a9c = 19
-> xDAWN Spatial Filter => #9
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/${SubjectName}/${paramFile}-spatial-filter.cfg
  0xac367a9c = 68
Input stream 1=#9, Input stream 2=#6.Output stream 3 -> Identity => #10
  0xac367a9c = 61
Input stream 1=#10.Output stream 1, Input stream 2=#10.Output stream 2 -> Identity => #11
  0xac367a9c = 31
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
  0xac367a9c = 52
#12.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 55
-> Feature aggregator
  0xac367a9c = 26
-> Classifier processor => #15
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 45
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #16
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
  0xac367a9c = 58
#16.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 49
-> Feature aggregator
  0xac367a9c = 67
-> Classifier processor => #19
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 62
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
  0xac367a9c = 17
#20.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 66
-> Feature aggregator
  0xac367a9c = 27
-> Classifier processor => #23
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 7
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #24
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
  0xac367a9c = 42
#24.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 63
-> Feature aggregator
  0xac367a9c = 18
-> Classifier processor => #27
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 23
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #28
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
  0xac367a9c = 21
#28.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 53
-> Feature aggregator
  0xac367a9c = 14
-> Classifier processor => #31
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 57
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #32
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
  0xac367a9c = 36
#32.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 24
-> Feature aggregator
  0xac367a9c = 37
-> Classifier processor => #35
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 34
Input stream 1=#15.Classification state, Input stream 2=#19.Classification state, Input stream 3=#23.Classification state, Input stream 4=#27.Classification state, Input stream 5=#31.Classification state, Input stream 6=#35.Classification state -> Identity => #36
  0xac367a9c = 50
Classification result 0=#36.Output stream 1, Classification result 1=#36.Output stream 2, Classification result 2=#36.Output stream 3, Classification result 3=#36.Output stream 4, Classification result 4=#36.Output stream 5, Classification result 5=#36.Output stream 6 -> Voting Classifier => #37
  Number of repetitions = ${NrOfRepetitions}
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
  0xac367a9c = 29
Input stream 1=#10.Output stream 1, Input stream 2=#10.Output stream 2 -> Identity => #38
  0xac367a9c = 22
Input signal=#38.Output stream 1, Input stimulations=#38.Output stream 2 -> Stimulation based epoching => #39
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
  0xac367a9c = 10
#39.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 8
-> Feature aggregator
  0xac367a9c = 1
-> Classifier processor => #42
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 28
Input signal=#38.Output stream 1, Input stimulations=#38.Output stream 2 -> Stimulation based epoching => #43
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
  0xac367a9c = 41
#43.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 60
-> Feature aggregator
  0xac367a9c = 46
-> Classifier processor => #46
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 44
Input signal=#38.Output stream 1, Input stimulations=#38.Output stream 2 -> Stimulation based epoching => #47
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
  0xac367a9c = 56
#47.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 15
-> Feature aggregator
  0xac367a9c = 38
-> Classifier processor => #50
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 9
Input signal=#38.Output stream 1, Input stimulations=#38.Output stream 2 -> Stimulation based epoching => #51
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
  0xac367a9c = 6
#51.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 43
-> Feature aggregator
  0xac367a9c = 13
-> Classifier processor => #54
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 47
Input signal=#38.Output stream 1, Input stimulations=#38.Output stream 2 -> Stimulation based epoching => #55
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
  0xac367a9c = 54
#55.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 59
-> Feature aggregator
  0xac367a9c = 64
-> Classifier processor => #58
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 48
Input signal=#38.Output stream 1, Input stimulations=#38.Output stream 2 -> Stimulation based epoching => #59
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
  0xac367a9c = 2
#59.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-epoch-average.cfg
  0xac367a9c = 4
-> Feature aggregator
  0xac367a9c = 51
-> Classifier processor => #62
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller-xDAWN/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-classifier-processor.cfg
  0xac367a9c = 20
Input stream 1=#42.Classification state, Input stream 2=#46.Classification state, Input stream 3=#50.Classification state, Input stream 4=#54.Classification state, Input stream 5=#58.Classification state, Input stream 6=#62.Classification state -> Identity => #63
  0xac367a9c = 11
Classification result 0=#63.Output stream 1, Classification result 1=#63.Output stream 2, Classification result 2=#63.Output stream 3, Classification result 3=#63.Output stream 4, Classification result 4=#63.Output stream 5, Classification result 5=#63.Output stream 6 -> Voting Classifier => #64
  Number of repetitions = ${NrOfRepetitions}
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
  0xac367a9c = 25
Sequence stimulations=#6.Output stream 3, Target stimulations=#6.Output stream 4, Row selection stimulations=#64, Column selection stimulations=#37 -> P300 Speller Visualisation Splotch
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 100
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 100
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 100
  Wrongly selected background color = 70,20,20
  Wrongly selected foreground color = 30,10,10
  Wrongly selected font size = 100
  Result font size = 20
  Letters group filename =
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-speller-visualisation.cfg
  0xac367a9c = 32
Input stimulations 1=#64, Input stimulations 2=#37 -> Stimulation multiplexer => #66
  0xac367a9c = 5
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2, Input stream 3=#6.Output stream 3, Input stream 4=#6.Output stream 4, Selections=#66 -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_$core{date}_$core{time}.ov
  Use compression = true
  0xac367a9c = 16
