OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${TrainFile}
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#3, Input stimulations=#0.Output stream 3 -> 0xc67a01dc Stimulation based epoching "Target Selection" => #4
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = 191
Stimulations=#0.Output stream 3, Session signal=#3, Evoked potential epochs=#4.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = 182
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
