OpenViBE-Scenario
Comment
  Use this scenario on your own risk.

  This scenario can be used to initialize a classifier
  based on the predictions recorded in the file.
  Training is triggered by the number 199 which is
  send by the stimulator every 10 trials/symbols.
  So this scenario will only train on the first 10 trials
  no matter how much data you recorded (probably
  only the first 9 trials as there is an issue with the
  execution order of the boxes, the xdawn begins
  training before epoch labeling processed the last
  trial). Thus, make sure you run this script on data you
  recorded in free mode (free mode and without
  any letters in the WordToSpell field of the python
  frontend) and with enough repititions (e.g. 20)

  The predictions should start from 1 if they start from
  zero it will not work (so only newly recorded files
  which record the predictions starting from 1 will work with this)

Generic stream reader => #0
  Filename = ${TrainFile}
#0.Output stream 2 -> Channel Selector
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#0.Output stream 3 -> File reader => #5
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
Input stream 1=#0.Output stream 3, Input stream 2=#5, Input stream 3=#4.Epoched signal, Input stream 4=#3, Input stream 5=#0.Output stream 3 -> Conditional Identity => #6
  Condition = 199
  0xac367a9c = 2
Prediction=#6.Output stream 1, LetterGroups=#6.Output stream 2, Epochs=#6.Output stream 3 -> Epoch Labeling => #7
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/buffer-relabel-epochs.py
  Trigger = 193
  0xac367a9c = 1
#6.Output stream 4 -> Time based epoching => #8
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
Stimulations=#6.Output stream 1, Session signal=#8, Evoked potential epochs=#7.TargetEpochs -> 0xc67a01dc xDAWN Spatial Filter Trainer => #9
  Train stimulation = 199
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
Signal=#7.TargetEpochs, SpatialFilter=#9.Spatial Filter -> Delayed Target Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #11
Signal=#7.NonTargetEpochs, SpatialFilter=#9.Spatial Filter -> Delayed NonTarget Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #13
#9.Train-completed Flag -> Lua Stimulator => #14
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-stim.lua
  Offset = 1
Stimulations=#14, Features for class 1=#11, Features for class 2=#13 -> Classifier trainer
  Classifier to use = Relearn Probabilistic LDA
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_TrainCompleted
  Number of partitions for k-fold test = 1
  Shrinkage = Shrink to diagonal
  Buffer size = 2400
  Lambda = 0.5
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-classifier-trainer_v2.cfg

Keyboard stimulator
  Filename = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
