OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
Triggers=#0.Stimulations, Matrix=#4.Epoched signal -> Stream Switch => #5
  Switch stim for output 1 = 181
  Switch stim for output 2 = 199
Input Signal=#5.Output[0] -> Spatial Filter With Update
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
#5.Output[0] -> 0xc67a01dc Multiple Spatial Filters
  Filename to load spatial filters from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/multiple-spatial-filters.cfg
-> Feature aggregator
  0xac367a9c = 26
-> Mixture of Experts classifier => #9
  Classifier to use = Mixture of Experts
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-moe-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_${AcquisitionMode}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> Player Controller
  Stimulation name = 182
  Action to perform = Stop
#0.Stimulations -> File reader => #12
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
Input stream 1=#0.Stimulations, Input stream 2=#12, Input stream 3=#4.Epoched signal, Input stream 4=#3, Input stream 5=#29.Class label -> Conditional Identity => #13
  Condition = 199
Prediction=#13.Output stream 5, LetterGroups=#13.Output stream 2, Epochs=#13.Output stream 3 -> Epoch Labeling => #14
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/buffer-relabel-epochs.py
  Trigger = 193
#13.Output stream 4 -> Time based epoching => #15
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
Stimulations=#13.Output stream 1, Session signal=#15, Evoked potential epochs=#14.TargetEpochs -> xDAWN Spatial Filter Trainer => #16
  Train stimulation = 199
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
Input Signal=#5.Output[1], Streamed Matrix=#16.Spatial Filter -> Spatial Filter With Update
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
-> Feature aggregator => #18
  0xac367a9c = 26
Signal=#14.TargetEpochs, SpatialFilter=#16.Spatial Filter -> Delayed Target Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #20
Signal=#14.NonTargetEpochs, SpatialFilter=#16.Spatial Filter -> Delayed NonTarget Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #22
#16.Train-completed Flag -> Lua Stimulator => #23
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-stim.lua
  Offset = 1
Stimulations=#23, Features for class 1=#20, Features for class 2=#22 -> Classifier trainer => #24
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_TrainCompleted
  Number of partitions for k-fold test = 1
Features=#18, Update=#24 -> Classifier processor WithUpdate => #25
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
Input stream 1=#9.Classification state, Input stream 2=#25.Classification state -> Streamed matrix multiplexer
-> Simple DSP => #27
  Equation = -x
New input[0]=#27, New input[1]=#12, New input[2]=#0.Stimulations -> Python scripting => #28
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Stimulations, Evidence=#28 -> EvidenceAccumulator => #29
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator.cfg
#29.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
