OpenViBE-Scenario
Comment
  This scenario will adapt the classifier by relearning
  based on its previous samples and it current ones.
  The labels, that are used, are the final predictions
  from the evidence accumulator (which comes back
  through the acquisition client).
  The spatial filter remains static.
  The rest of the pipeline is similar to that of
  p300-speller-4-online-without-monitoring.
  The keyboard stimulator is used to stop the scenario
  Otherwise it could happen that, when the stimulator
  sends the end-of-experiment stimulus, the classifier
  is not save because the scenario is already stopped.
  The adaptive p300 classifier box uses the relearn
  probabilistic lda classifier with shrinking the cov
  matrix to the diagonal with lambda 0.5. This
  is fixed in the code, should make it a parameter

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#4.Epoched signal -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
-> Feature aggregator => #6
  0xac367a9c = 26
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/${SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> File reader => #8
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
Flash vectors=#6, groups=#8, label=#0.Stimulations -> 0xc67a01dc AdaptiveP300Classifier => #9
  Classifier to use = Relearn Probabilistic LDA
  File to load/write configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Feedback based learning = true
  Feedback onset stimulation = 193
  Target onset stimulation = 194
  Save file trigger = 182
  Shrinkage = Shrink to diagonal
  Buffer size = 2400
  Lambda = 0.5
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-classifier-adaptivep300trainer.cfg
New input[0]=#9, New input[1]=#8, New input[2]=#0.Stimulations -> Python scripting => #10
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Stimulations, Evidence=#10 -> EvidenceAccumulator => #11
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg
#11.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator

Keyboard stimulator
  Filename = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
