OpenViBE-Scenario
Comment
  This combines the adaptive learning scenario
  with the subject independent scenario.
  The first ten symbols will be classified by
  the mixture of experts (the left branch after
  the stream switch). After the 10 symbols, an inital
  spatial filter and classifier is computed based
  on its predictions. This classifier is then loaded
  by the adaptive p300 classifier box and further
  adapted based on the predictions (the right branch
  under the stream swicth)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
Triggers=#0.Stimulations, Matrix=#4.Epoched signal -> Stream Switch => #5
  Switch stim for output 1 = 181
  Switch stim for output 2 = 199
#5.Output[0] -> Multiple Spatial Filters
  Filename to load spatial filters from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/multiple-spatial-filters.cfg
-> Feature aggregator
  0xac367a9c = 26
-> Mixture of Experts classifier => #8
  Classifier to use = Mixture of Experts
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-moe-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/${SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> File reader => #10
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
Input stream 1=#0.Stimulations, Input stream 2=#10, Input stream 3=#4.Epoched signal, Input stream 4=#3, Input stream 5=#27.Class label -> Conditional Identity => #11
  Condition = 199
  0xac367a9c = 2
Prediction=#11.Output stream 1, LetterGroups=#11.Output stream 2, Epochs=#11.Output stream 3 -> Epoch Labeling => #12
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/buffer-relabel-epochs.py
  Trigger = 193
  0xac367a9c = 1
#11.Output stream 4 -> Time based epoching => #13
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
Stimulations=#11.Output stream 1, Session signal=#13, Evoked potential epochs=#12.TargetEpochs -> xDAWN Spatial Filter Trainer => #14
  Train stimulation = 199
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
Input Signal=#5.Output[1], Streamed Matrix=#14.Spatial Filter -> Spatial Filter With Update
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
-> Feature aggregator => #16
  0xac367a9c = 26
Signal=#12.TargetEpochs, SpatialFilter=#14.Spatial Filter -> Delayed Target Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #18
Signal=#12.NonTargetEpochs, SpatialFilter=#14.Spatial Filter -> Delayed NonTarget Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #20
#14.Train-completed Flag -> Lua Stimulator => #21
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-stim.lua
  Offset = 1
Stimulations=#21, Features for class 1=#18, Features for class 2=#20 -> Classifier trainer => #22
  Classifier to use = Relearn Probabilistic LDA
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_TrainCompleted
  Number of partitions for k-fold test = 1
  Shrinkage = Shrink to diagonal
  Buffer size = 2400
  Lambda = 0.5
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-classifier-trainer_v2.cfg
Input stimulations 1=#0.Stimulations, Input stimulations 2=#22 -> Stimulation multiplexer => #23
Flash vectors=#16, groups=#10, label=#23 -> AdaptiveP300Classifier => #24
  Classifier to use = Relearn Probabilistic LDA
  File to load/write configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Feedback based learning = true
  Feedback onset stimulation = 193
  Target onset stimulation = 194
  Save file trigger = 182
  Shrinkage = Shrink to diagonal
  Buffer size = 2400
  Lambda = 0.5
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-classifier-adaptivep300trainer.cfg
Input stream 1=#8.Classification state, Input stream 2=#24 -> Streamed matrix multiplexer => #25
New input[0]=#25, New input[1]=#10, New input[2]=#0.Stimulations -> Python scripting => #26
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Stimulations, Evidence=#26 -> EvidenceAccumulator => #27
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg
#27.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator

Keyboard stimulator
  Filename = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
