OpenViBE-Scenario

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> 0xc67a01dc Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> 0xc67a01dc Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> 0xc67a01dc Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Stimulations -> 0xc67a01dc Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#4.Epoched signal -> 0xc67a01dc Multiple Spatial Filters
  Filename to load spatial filters from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/multiple-spatial-filters.cfg
-> 0xc67a01dc Feature aggregator
  0xac367a9c = 26
-> 0xc67a01dc Mixture of Experts classifier => #7
  Classifier to use = Mixture of Experts
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-moe-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> 0xc67a01dc Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_${AcquisitionMode}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> 0xc67a01dc Player Controller
  Stimulation name = 182
  Action to perform = Stop
#0.Stimulations -> 0xc67a01dc File reader => #10
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
New input[0]=#7.Classification state, New input[1]=#10, New input[2]=#0.Stimulations -> 0xc67a01dc Python scripting => #11
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Stimulations, Evidence=#11 -> 0xc67a01dc EvidenceAccumulator => #12
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg
Input stream 1=#0.Stimulations, Input stream 2=#10, Input stream 3=#4.Epoched signal, Input stream 4=#3, Input stream 5=#12.Class label -> 0xc67a01dc Conditional Identity => #13
  Condition = 199
Prediction=#13.Output stream 5, LetterGroups=#13.Output stream 2, Epochs=#13.Output stream 3 -> 0xc67a01dc Epoch Labeling => #14
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/buffer-relabel-epochs.py
  Trigger = 193
#13.Output stream 4 -> 0xc67a01dc Time based epoching => #15
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
Stimulations=#13.Output stream 1, Session signal=#15, Evoked potential epochs=#14.TargetEpochs -> 0xc67a01dc xDAWN Spatial Filter Trainer => #16
  Train stimulation = 199
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
Signal=#14.TargetEpochs, SpatialFilter=#16.Spatial Filter -> 0xc67a01dc Delayed Target Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> 0xc67a01dc Feature aggregator => #18
Signal=#14.NonTargetEpochs, SpatialFilter=#16.Spatial Filter -> 0xc67a01dc Delayed NonTarget Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> 0xc67a01dc Feature aggregator => #20
#16.Train-completed Flag -> 0xc67a01dc Lua Stimulator => #21
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-stim.lua
  Offset = 1
Stimulations=#21, Features for class 1=#18, Features for class 2=#20 -> 0xc67a01dc Classifier trainer
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_TrainCompleted
  Number of partitions for k-fold test = 1
#12.Class label -> 0xc67a01dc Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> 0xc67a01dc SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
