OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  0xac367a9c = 68
Input signal=#4, Input stimulations=#0.Stimulations -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#5.Epoched signal -> Feature aggregator
  0xac367a9c = 26
-> Classifier processor => #7
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
  0xac367a9c = 45
#7.Classification state -> Simple DSP => #8
  Equation = -x
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_${AcquisitionMode}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> Identity => #10
  0xac367a9c = 65
-> Player Controller
  Stimulation name = 182
  Action to perform = Stop
#10 -> File reader => #12
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
New input[0]=#8, New input[1]=#12, New input[2]=#10 -> Python scripting => #13
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#10, Evidence=#13 -> 0xc67a01dc EvidenceAccumulator => #14
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v1.cfg
#14.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
