OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #2
  0xac367a9c = 65
#2.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #5
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  0xac367a9c = 68
Input signal=#5, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#6.Epoched signal -> Feature aggregator
  0xac367a9c = 26
-> Classifier processor => #8
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
  0xac367a9c = 45
#8.Classification state -> Simple DSP => #9
  Equation = -x
#5 -> Channel Selector => #10
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
Input signal=#10, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 192
#11.Epoched signal -> Epoch variance => #12
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Input signal=#10, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 191
#13.Epoched signal -> Epoch variance => #14
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Trigger=#2.Output stream 3, ERP1=#14.Averaged epochs, Variance1=#14.Confidence bounds, ERP2=#12.Averaged epochs, Variance2=#12.Confidence bounds -> ERP plot
  Filename final figure = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_$core{date}_$core{time}.png
  Trigger to save figure = 182
  Line color 1 = 15,81,13
  Line label 1 = target
  Line color 2 = 87,14,14
  Line label 2 = non-target
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_${AcquisitionMode}_$core{date}_$core{time}.ov
  Use compression = true
#2.Output stream 2 -> Temporal filter - GPL => #17
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
#2.Output stream 3 -> Stimulation Filter => #18
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 183
  Stimulation range end = 184
Signal=#17, Input stream 3=#18 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0.Stimulations -> Identity => #20
  0xac367a9c = 65
-> Player Controller
  Stimulation name = 182
  Action to perform = Stop
#20 -> File reader => #22
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
New input[0]=#9, New input[1]=#22, New input[2]=#20 -> Python scripting => #23
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#20, Evidence=#23 -> EvidenceAccumulator => #24
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator.cfg
#24.Class label -> 0xc67a01dc Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
