OpenViBE-Scenario

Keyboard stimulator
  Filename = ../share/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 10
  Number of trials = 16
  Flash duration (in sec) = 0.083333333333333333
  No flash duration (in sec) = 0.083333333333333333
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 3
  Avoid neighbor flashing = false
-> Target Letter Generation => #2
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/target-stimulator.lua
  Word to Spell (leave this empty if random) = avoidcopypasting
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#3.Signal strea, Input stream 2=#1, Input stream 3=#2 -> Identity => #4
#4.Output stream 1 -> Channel Selector
  Channel List = 5;6;7;15;16;17;20;21;22;23;24;25;26;27;28;29;30;31;32
  Action = Select
  Channel Matching Method = Index
-> Temporal filter - GPL => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
Target=#4.Output stream 3, Chosen Line=#54.Output stream 1, Chosen Column=#54.Output stream 2 -> SupErrP => #7
Input stream 1=#6, Input stream 2=#4.Output stream 2, Input stream 3=#57 -> Identity => #8
Input stream 1=#8.Output stream 1, Input stream 2=#8.Output stream 2, Input stream 3=#8.Output stream 3 -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #10
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#10.Epoched signal -> Feature aggregator => #11
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#12.Epoched signal -> Feature aggregator => #13
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #14
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#14.Epoched signal -> Feature aggregator => #15
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #16
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#16.Epoched signal -> Feature aggregator => #17
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #18
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#18.Epoched signal -> Feature aggregator => #19
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#20.Epoched signal -> Feature aggregator => #21
Input stream 0=#11, Input stream 1=#13, Input stream 2=#15, Input stream 3=#17, Input stream 4=#19, Input stream 5=#21 -> Normalization box 1 => #22
Features=#22.Output stream 0, Update=#9.Output stream 3 -> Classifier processor WithUpdate => #23
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#22.Output stream 1, Update=#9.Output stream 3 -> Classifier processor WithUpdate => #24
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#22.Output stream 2, Update=#9.Output stream 3 -> Classifier processor WithUpdate => #25
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#22.Output stream 3, Update=#9.Output stream 3 -> Classifier processor WithUpdate => #26
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#22.Output stream 4, Update=#9.Output stream 3 -> Classifier processor WithUpdate => #27
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#22.Output stream 5, Update=#9.Output stream 3 -> Classifier processor WithUpdate => #28
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Input stream 1=#23.Classification state, Input stream 2=#24.Classification state, Input stream 3=#25.Classification state, Input stream 4=#26.Classification state, Input stream 5=#27.Classification state, Input stream 6=#28.Classification state -> Identity => #29
Classification result 0=#29.Output stream 1, Classification result 1=#29.Output stream 2, Classification result 2=#29.Output stream 3, Classification result 3=#29.Output stream 4, Classification result 4=#29.Output stream 5, Classification result 5=#29.Output stream 6 -> Voting Classifier => #30
  Number of repetitions = 10
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Input stream 1=#22.Output stream 0, Input stream 2=#22.Output stream 1, Input stream 3=#22.Output stream 2, Input stream 4=#22.Output stream 3, Input stream 5=#22.Output stream 4, Input stream 6=#22.Output stream 5 -> Identity => #31
Input stream 1=#8.Output stream 1, Input stream 2=#8.Output stream 2, Input stream 3=#8.Output stream 3 -> Identity => #32
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #33
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#33.Epoched signal -> Feature aggregator => #34
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #35
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#35.Epoched signal -> Feature aggregator => #36
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #37
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#37.Epoched signal -> Feature aggregator => #38
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #39
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#39.Epoched signal -> Feature aggregator => #40
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#41.Epoched signal -> Feature aggregator => #42
Input signal=#32.Output stream 1, Input stimulations=#32.Output stream 2 -> Stimulation based epoching => #43
  Epoch duration (in sec) = 0.604
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#43.Epoched signal -> Feature aggregator => #44
Input stream 0=#34, Input stream 1=#36, Input stream 2=#38, Input stream 3=#40, Input stream 4=#42, Input stream 5=#44 -> Normalization box 2 => #45
Features=#45.Output stream 0, Update=#32.Output stream 3 -> Classifier processor WithUpdate => #46
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#45.Output stream 1, Update=#32.Output stream 3 -> Classifier processor WithUpdate => #47
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#45.Output stream 2, Update=#32.Output stream 3 -> Classifier processor WithUpdate => #48
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#45.Output stream 3, Update=#32.Output stream 3 -> Classifier processor WithUpdate => #49
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#45.Output stream 4, Update=#32.Output stream 3 -> Classifier processor WithUpdate => #50
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Features=#45.Output stream 5, Update=#32.Output stream 3 -> Classifier processor WithUpdate => #51
  Classifier to use = Policy Gradient
  Filename to load configuration from = C:/openvibe-0.12.0-svn3107-src/P300/p300-classifier-pg_norm.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/adaptive-classifier-processor.cfg
Input stream 1=#46.Classification state, Input stream 2=#47.Classification state, Input stream 3=#48.Classification state, Input stream 4=#49.Classification state, Input stream 5=#50.Classification state, Input stream 6=#51.Classification state -> Identity => #52
Classification result 0=#52.Output stream 1, Classification result 1=#52.Output stream 2, Classification result 2=#52.Output stream 3, Classification result 3=#52.Output stream 4, Classification result 4=#52.Output stream 5, Classification result 5=#52.Output stream 6 -> Voting Classifier => #53
  Number of repetitions = 10
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#30, Input stream 2=#53 -> Identity => #54
Sequence stimulations=#4.Output stream 2, Target stimulations=#4.Output stream 3, Row selection stimulations=#54.Output stream 1, Column selection stimulations=#54.Output stream 2 -> P300 Speller Visualisation Splotch
  Interface filename = ../share/coadapt/openvibe-plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 30
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 20
  Target background color = 10,9,40
  Target foreground color = 60,75,100
  Target font size = 30
  Selected background color = 7,40,8
  Selected foreground color = 3,72,13
  Selected font size = 30
  Wrongly selected background color = 70,20,20
  Wrongly selected foreground color = 30,10,10
  Wrongly selected font size = 30
  Result font size = 20
  Letters group filename = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/dieters-group.cfg
Input stream 1=#45.Output stream 0, Input stream 2=#45.Output stream 1, Input stream 3=#45.Output stream 2, Input stream 4=#45.Output stream 3, Input stream 5=#45.Output stream 4, Input stream 6=#45.Output stream 5 -> Identity => #56
Stimulations=#4.Output stream 2, ErrP input=#7, Line 1=#31.Output stream 1, Line 2=#31.Output stream 2, Line 3=#31.Output stream 3, Line 4=#31.Output stream 4, Line 5=#31.Output stream 5, Line 6=#31.Output stream 6, Column 1=#56.Output stream 1, Column 2=#56.Output stream 2, Column 3=#56.Output stream 3, Column 4=#56.Output stream 4, Column 5=#56.Output stream 5, Column 6=#56.Output stream 6 -> 0xc67a01dc PG Trainer => #57
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/p300-adaptive-classifier.cfg
  Train trigger = OVTK_StimulationId_TrialStop
  Eta = 0.1
  Lambda = 0.1
  Number of rows = 6
  Number of columns = 6
  Filename to load group of letters from = ${Path_Samples_CoAdapt}/bci/p300-speller-adaptive/dieters-group.cfg
  Temperature parameter = 0.01
