OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box
   and pressing F1
Comment
  Currently the flash groups and the
  group type sequence are always the
  same and read from premade files.
Comment
  Overview

  This scenario illustrates unsupervised P300 speller
  based on the work of David Hübner, Thibault
  Verhoeven, Pieter-Jan Kindermans, Michael
  Tangermann and others.

  On each trial, you can either focus on the
  proposed letter or any letter of your choice
  while avoiding focusing on the # symbols.

  After several trials, the prediction accuracy
  should start to increase.

  Note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The visualizer sends the events on the P300 timeline
  to the Acquisition Server using Software Tagging
  (TCP Tagging) after rendering them

Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/start-stimulator.lua
  Start delay (secs) = 5
-> P300 Speller Stimulator II => #1
  Start stimulation = OVTK_StimulationId_ExperimentStart
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Number of rows = 6
  Number of columns = 7
  Number of flashes per letter = 68
  Number of letters to spell = 5
  Trial start duration (in sec) = 1
  Flash duration (in sec) = 0.075
  After flash duration (in sec) = 0.125
  Rest duration (in sec) = 5
  Flash group file = ${Player_ScenarioDirectory}/unsupervised-p300-example-groups.csv
  Flash sequence type file = ${Player_ScenarioDirectory}/unsupervised-p300-example-sequence.csv
  Keyboard config = ab#c#de#fghij#klm#nopq#rstu#vwxy#z_#.#,!?<
  Text to spell = quick_brown_fox_jumps_over_the_lazy_dog
#1.Timeline -> 0x341d3912 Stimulation listener "Stim timeline"
  Log level to use = Information
#1.Flash groups -> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 42
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#4.Signal stream, Stimulations=#4.Stimulations -> 0x341d3912 Signal display "Debug display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#4.Experiment information, Input stream 2=#4.Signal stream, Input stream 3=#4.Stimulations -> Identity => #6
#6.Output stream 2 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Signal Resampling => #8
  New Sampling Frequency = 100
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#8, Input stimulations=#6.Output stream 3 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 1.0
  Epoch offset (in sec) = -0.2
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
Signal input=#9, Group=#1.Flash groups, Sequence=#1.Flash sequence -> P300 classifier => #10
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per letter = 68
  Enable debug = false
Flash patterns=#1.Flash groups, Timeline=#1.Timeline, Selection stimulations=#10 -> P300 Speller Visualisation II
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller-hash.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 60
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 60
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 60
#10 -> 0x341d3912 Stimulation listener "Predictions"
  Log level to use = Information
#9 -> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = false
  Number of values in expanded blocks = 4
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2, Input stream 3=#6.Output stream 3 -> Generic stream writer "Output file (if desired)"
  Filename = ${Player_ScenarioDirectory}/signals/p300-unsupervised-[$core{date}-$core{time}].ov
  Use compression = false
#6.Output stream 3 -> Identity => #15
-> 0x341d3912 Stimulation listener "AS Timeline"
  Log level to use = Information
#15 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
