OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria

Epochs => #0
  Filename = ${Player_ScenarioDirectory}/signals-new/01-epoched-data.csv
#0.Output stream -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause
Group => #3
  Filename = ${Player_ScenarioDirectory}/signals-new/02-stimuli.csv
#3.Output stream -> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
Sequence => #5
  Filename = ${Player_ScenarioDirectory}/signals-new/03-sequence.csv
Signal input=#0.Output stream, Trigger=#3.Output stream, New input=#5.Output stream -> P300 classifier
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per trial = 68
-> 0x341d3912 Stimulation listener
  Log level to use = Information

0x341d3912 Sinus oscillator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> 0x341d3912 Feature aggregator
-> CSV File Writer (Deprecated)
  Filename = ${Player_ScenarioDirectory}/test.csv
  Column separator = ;
  Precision = 10

0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
