OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  Tests classifier
  with epoched, prerecorded data

Epoched data => #0
  Filename = ${Player_ScenarioDirectory}/signals-test/01-epoched-data.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Flash groups => #1
  Filename = ${Player_ScenarioDirectory}/signals-test/03-groups.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
-> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
Group types => #3
  Filename = ${Player_ScenarioDirectory}/signals-test/04-sequence.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Signal input=#0, Trigger=#1, New input=#3 -> P300 classifier
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per trial = 68
  Enable debug = true
-> 0x341d3912 Stimulation listener
  Log level to use = Information
