OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting
  the box and pressing F1
Comment
  Currently the flash groups and the
  group type sequence are always the
  same and read from premade files.
Comment
  This LUA script creates the sequence
  of events that happen during the
  scenario.
Comment
  Overview

  This scenario illustrates unsupervised P300 speller
  based on the work of David Hübner, Thibault
  Verhoeven, Pieter-Jan Kindermans, Michael
  Tangermann and others.

  On each trial, you can either focus on the
  proposed letter or any letter of your choice
  while avoiding focusing on the # symbols.

  After several trials, the prediction accuracy
  should start to increase.

  Note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Raw data => #0
  Filename = ${Player_ScenarioDirectory}/signals-old/01-raw-data.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
-> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = false
  Number of values in expanded blocks = 4
Raw stims => #2
  Filename = ${Player_ScenarioDirectory}/signals-old/01-raw-stims.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Input stream 2=#0, Input stream 3=#2 -> Identity => #3
#3.Output stream 3 -> 0x341d3912 Stimulation listener
  Log level to use = Information
#3.Output stream 2 -> Signal Resampling => #5
  New Sampling Frequency = 100
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#5, Input stimulations=#3.Output stream 3 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0.05
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#3.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-unsupervised-[$core{date}-$core{time}].ov
  Use compression = false
#3.Output stream 3 -> Identity
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
#2 -> 0x341d3912 Stimulation listener
  Log level to use = Information
Groups => #11
  Filename = ${Player_ScenarioDirectory}/signals-old/02-stimuli.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Sequence => #12
  Filename = ${Player_ScenarioDirectory}/signals-old/03-sequence.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Signal input=#6, Group=#11, Sequence=#12 -> P300 classifier => #13
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per letter = 68
-> 0x341d3912 Stimulation listener "Predictions"
  Log level to use = Information
P300 timeline => #15
  Lua Script = ${Player_ScenarioDirectory}/timeline_p300.lua
  Number of letters to spell = 10
  Flashes per letter = 68
  Flash duration = 0.1
  Text to spell = quick_brown fox
Flash patterns=#11, Timeline=#15, Selection stimulations=#13 -> P300 Speller Visualisation II
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller-hash.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
