OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  Tests visualizer and classifier
  with non-epoched, prerecorded data
Comment
  Data and event markers are read from
  premade files in this test scenario
Comment
  Currently the flash groups and the
  group type sequence are always the
  same and read from premade files.
Comment
  You can browse each box' documentation by selecting
  the box and pressing F1
Comment
  This LUA script creates the sequence
  of events that happen during the
  scenario. Unused in this test scenario.
Comment
  Overview

  This scenario illustrates unsupervised P300 speller
  based on the work of David Hübner, Thibault
  Verhoeven, Pieter-Jan Kindermans, Michael
  Tangermann and others.

  On each trial, you can either focus on the
  proposed letter or any letter of your choice
  while avoiding focusing on the # symbols.

  After several trials, the prediction accuracy
  should start to increase.

  Note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Raw data => #0
  Filename = ${Player_ScenarioDirectory}/signals-test/01-raw-data.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
-> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = false
  Number of values in expanded blocks = 4
Flash times => #2
  Filename = ${Player_ScenarioDirectory}/signals-test/02-flashes.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Input stream 2=#0, Input stream 3=#2 -> Identity => #3
#3.Output stream 2 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Signal Resampling => #5
  New Sampling Frequency = 100
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#5, Input stimulations=#3.Output stream 3 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.8
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
#3.Output stream 3 -> 0x341d3912 Stimulation listener
  Log level to use = Information
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#3.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-unsupervised-[$core{date}-$core{time}].ov
  Use compression = false
#3.Output stream 3 -> Identity => #9
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
#2 -> 0x341d3912 Stimulation listener
  Log level to use = Information
Groups => #12
  Filename = ${Player_ScenarioDirectory}/signals-test/03-groups.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Group types => #13
  Filename = ${Player_ScenarioDirectory}/signals-test/04-sequence.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Signal input=#6, Group=#12, Sequence=#13 -> P300 classifier => #14
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per letter = 68
  Enable debug = false
-> 0x341d3912 Stimulation listener "Predictions"
  Log level to use = Information
Flash patterns=#12, Timeline=#9, Selection stimulations=#14 -> P300 Speller Visualisation II
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller-hash.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75

0x341d3912 P300 timeline
  Lua Script = ${Player_ScenarioDirectory}/timeline_p300.lua
  Number of letters to spell = 10
  Flashes per letter = 68
  Flash duration = 0.1
  Text to spell = quick_brown fox
