OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria

Groups => #0
  Filename = ${Player_ScenarioDirectory}/signals-old/02-stimuli.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
P300 timeline => #1
  Lua Script = ${Player_ScenarioDirectory}/timeline_p300.lua
  Number of letters to spell = 10
  Flashes per letter = 8
  Flash duration = 0.1
  Text to spell = quick_brown fox
CSV File Reader (Deprecated) => #2
  Filename = ${Player_ScenarioDirectory}/signals-old/01-epoched-data.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
CSV File Reader (Deprecated) => #3
  Filename = ${Player_ScenarioDirectory}/signals-old/03-sequence.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
Signal input=#2, Trigger=#0, New input=#3 -> P300 classifier => #4
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per trial = 68
Flash patterns=#0, Timeline=#1, Selection stimulations=#4 -> P300 Speller Visualisation II
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller-hash.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
