OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria

CSV File Reader (Deprecated) => #0
  Filename = ${Player_ScenarioDirectory}/signals/01-data.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
-> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause
CSV File Reader (Deprecated) => #3
  Filename = ${Player_ScenarioDirectory}/signals/02-stimuli.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
-> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
CSV File Reader (Deprecated) => #5
  Filename = ${Player_ScenarioDirectory}/signals/03-sequence.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
Signal input=#0, Trigger=#3, New input=#5 -> P300 classifier
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Zero trigger = OVTK_StimulationId_Label_01
-> Stimulation listener
  Log level to use = Information

0x341d3912 Sinus oscillator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> 0x341d3912 Feature aggregator
-> CSV File Writer (Deprecated)
  Filename = ${Player_ScenarioDirectory}/test.csv
  Column separator = ;
  Precision = 10
