OpenViBE-Scenario
0x8c1fc55b = 1.0
0xf36a1567 = http://openvibe.inria.fr/p300-with-external-stimulator-tutorial/
0xf6b2e3fa = p300-with-external-stimulator
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector
  Channel List = ${CoAdaptP300_Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Signal=#2 -> 0xc67a01dc Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100

Keyboard stimulator
  Filename = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
