OpenViBE-Scenario
0x8c1fc55b = 1.0
0xf36a1567 = http://openvibe.inria.fr/p300-with-external-stimulator-tutorial/
0xf6b2e3fa = p300-with-external-stimulator
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = ${CoAdaptP300_TrainFile}
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/${CoAdaptP300_paramFile}-spatial-filter.cfg
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = 191
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection" => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = 192
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#0.Output stream 3, Features for class 1=#7, Features for class 2=#10 -> 0xc67a01dc Classifier trainer
  Strategy to apply = Native
  Algorithm to use = Probabilistic Linear Discrimimant Analysis (PLDA)
  Filename to save configuration to = ${Player_ScenarioDirectory}/${CoAdaptP300_paramFile}-classifier.cfg
  Train trigger = 182
  Number of partitions for k-fold test = 20
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
