OpenViBE-Scenario
Comment
  This scenario can be used to learn the classifier
  from its recorded predictions in the file (predictions should
  start at 1 not zero as in older recordings). Using the
  p300-speller-3-init-classifier-pred-based.xml scenario
  you can initialize a classifier based on its predictions.
  However with the regularization it should be possible
  to run this script with no prior samples or without prior initialization
  (otherwise the inverse of the covariance matrix
  would crash in case there are too few samples)

  If you uncheck 'feedback based learning' in the
   adaptive p300 classifier box you should be able to
  learn 'incrementally' from the true labels in copy
  mode or calibration.

  The predictions from which it learns come from the
  file. If you want them to come from the new
  predictions that are made and come out of the
  evidence accumulator box you should connect those
  two accordingly.

Generic stream reader => #0
  Filename = ${TrainFile}
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #2
  Decimation factor = 4
Input signal=#2, Input stimulations=#0.Output stream 3 -> Stimulation based epoching => #3
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#3.Epoched signal -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
-> Feature aggregator => #5
  0xac367a9c = 26
#0.Output stream 3 -> File reader => #6
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
Flash vectors=#5, groups=#6, label=#0.Output stream 3 -> AdaptiveP300Classifier => #7
  Classifier to use = Relearn Probabilistic LDA
  File to load/write configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Feedback based learning = true
  Feedback onset stimulation = 193
  Target onset stimulation = 194
  Save file trigger = 182
  Shrinkage = Shrink to diagonal
  Buffer size = 2400
  Lambda = 0.5
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-classifier-adaptivep300trainer.cfg
New input[0]=#7, New input[1]=#6, New input[2]=#0.Output stream 3 -> Python scripting => #8
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Output stream 3, Evidence=#8 -> EvidenceAccumulator
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg

Keyboard stimulator
  Filename = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
