OpenViBE-Scenario
Comment
  This scenario is the subject independent scenario that
  can be used to skip calibration. One can immediately
  start in free spelling mode (on the same hardware
  on which the models have been trained, otherwise
  you should find another optimal delay). After a
  session of 10 letters, it will automatically compute
  a new spatial filter and classifier based on the predictions.
Comment
  This is the part that buffers all the data and then
  computes the spatial filters and classifier after 10
  symbols have been selected
   (the number 10 is hardcoded in the
  ovexP300Visualiser.cpp file)
Comment
  The processing pipeline is sligthly different
  from the p300-speller-4-online-with-monitoring. Here
  a mixture of experts is used for the spatial filters and
  the classifiers, instead of only one set of spatial filters
  and one classifier.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#4.Epoched signal -> Multiple Spatial Filters
  Filename to load spatial filters from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/multiple-spatial-filters.cfg
-> Feature aggregator
  0xac367a9c = 26
-> Mixture of Experts classifier => #7
  Classifier to use = Mixture of Experts
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-moe-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/${SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> File reader => #9
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
New input[0]=#7.Classification state, New input[1]=#9, New input[2]=#0.Stimulations -> Python scripting => #10
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Stimulations, Evidence=#10 -> EvidenceAccumulator => #11
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg
Input stream 1=#0.Stimulations, Input stream 2=#9, Input stream 3=#4.Epoched signal, Input stream 4=#3, Input stream 5=#11.Class label -> Conditional Identity => #12
  Condition = 199
  0xac367a9c = 2
Prediction=#12.Output stream 1, LetterGroups=#12.Output stream 2, Epochs=#12.Output stream 3 -> Epoch Labeling => #13
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/buffer-relabel-epochs.py
  Trigger = 193
  0xac367a9c = 1
#12.Output stream 4 -> Time based epoching => #14
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
Stimulations=#12.Output stream 1, Session signal=#14, Evoked potential epochs=#13.TargetEpochs -> xDAWN Spatial Filter Trainer => #15
  Train stimulation = 199
  Spatial filter configuration = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  Filter dimension = 3
Signal=#13.TargetEpochs, SpatialFilter=#15.Spatial Filter -> Delayed Target Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #17
Signal=#13.NonTargetEpochs, SpatialFilter=#15.Spatial Filter -> Delayed NonTarget Filter
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-spatial-filter.py
-> Feature aggregator => #19
#15.Train-completed Flag -> Lua Stimulator => #20
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/delayed-stim.lua
  Offset = 1
Stimulations=#20, Features for class 1=#17, Features for class 2=#19 -> Classifier trainer
  Classifier to use = Relearn Probabilistic LDA
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Train trigger = OVTK_StimulationId_TrainCompleted
  Number of partitions for k-fold test = 1
  Shrinkage = Shrink to diagonal
  Buffer size = 2400
  Lambda = 0.5
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-classifier-trainer_v2.cfg
#11.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator

Keyboard stimulator
  Filename = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
