OpenViBE-Scenario
Comment
  This is the default scenario that should be used with
   the external p300 stimulator and the python front
  end. It can be used for both calibration (
  in this case dummy spatial filters and classifer
  are used), for copy and free spelling. A static classifier
  is used, nothing is adapted, but it can stop early.
Comment
  This part of the scenario is responsible for showing
  the signals and the target versus non-target figures
  with confidence bound
Comment
  Temporal filtering and spatial filtering is done before epoching.
  Epochs are extracted based on the stimulation
  identifier 195 (corresponding to a flash). The
  stimulation based file reader will read a text file
  containing lines with zeros and ones. Each line
  defines which symbols have been flashed during a
  flash. The classifier outputs the probability for each flash.
  This probability is then combined by the python
  script with the info about the symbols being flashed.
  The evidence accumulator then computes the
  probabilities for each symbol and outputs the most
  probable one when a certain threshold is reached.
  This result is written in shared memory which is read
  by the p300 stimulator

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #2
  0xac367a9c = 65
#2.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #5
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
  0xac367a9c = 68
-> Channel Selector => #6
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
Input signal=#6, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 191
#7.Epoched signal -> Epoch variance => #8
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Input signal=#6, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 192
#9.Epoched signal -> Epoch variance => #10
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Trigger=#2.Output stream 3, ERP1=#8.Averaged epochs, Variance1=#8.Confidence bounds, ERP2=#10.Averaged epochs, Variance2=#10.Confidence bounds -> ERP plot
  Filename final figure = ${Path_Samples_CoAdapt}/signals/${SubjectName}/p300_${SubjectName}_$core{date}_$core{time}.png
  Trigger to save figure = 182
  Line color 1 = 15,81,13
  Line label 1 = target
  Line color 2 = 87,14,14
  Line label 2 = non-target
Input signal=#5, Input stimulations=#2.Output stream 3 -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#12.Epoched signal -> Feature aggregator
  0xac367a9c = 26
-> Classifier processor => #14
  Classifier to use = Probabilistic LDA
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
  0xac367a9c = 45
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> 0xc67a01dc Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/${SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.ov
  Use compression = true
#2.Output stream 2 -> Temporal filter - GPL => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
#2.Output stream 3 -> Stimulation Filter => #17
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 183
  Stimulation range end = 184
Signal=#16, Input stream 3=#17 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0.Stimulations -> Identity => #19
  0xac367a9c = 65
-> File reader => #20
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
New input[0]=#14.Classification state, New input[1]=#20, New input[2]=#19 -> Python scripting => #21
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#19, Evidence=#21 -> EvidenceAccumulator => #22
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg
#22.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
#19 -> Player Controller
  Stimulation name = 182
  Action to perform = Stop
