OpenViBE-Scenario

0xc67a01dc GDF file reader => #0
  Filename = /auto/sop-nas2a/u/sop-nas2a/vol/home_athena/ddevlami/Data/TestArchet/071112_092430/oddball/p300_dieter_2012.11.06_17.02.01.gdf
  Samples per buffer = 32
#0.Stimulations -> Target Letter Generation => #1
  Lua Script = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-target-stimulator.lua
  Word to Spell (leave this empty if random) = XXXXX
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
  Symbol list = ${Path_Samples_CoAdapt}/bci/p300-Nice/p300-odd-ball-symbols.xml
#0.EEG stream -> Channel Selector
  Channel List = 26
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter - GPL => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
Input signal=#3, Input stimulations=#8 -> Stimulation based epoching => #4
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Input signal=#3, Input stimulations=#8 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
input1=#4.Epoched signal, input2=#5.Epoched signal -> Two-sample t-test
-> Likeliness distributor => #7
  index = 23
  number = 26
  scale = 256
Sequence stimulations=#0.Stimulations, Target stimulations=#1, Character likeliness=#7 -> P300 Serial Speller Visualisation => #8
  Interface filename = ../share/coadapt/openvibe-plugins/simple-visualisation/p300-serial-speller.ui
  Stimulation base = OVTK_StimulationId_Label_01
  Flash background color = 10,10,10
  Flash foreground color = 90,90,90
  Flash font size = 100
  Target background color = 10,10,65
  Target foreground color = 29,9,9
  Target font size = 100
  Correct selected background color = 0,37,0
  Correct selected foreground color = 29,9,9
  Correct selected font size = 100
  Wrong selected background color = 92,5,5
  Wrong selected foreground color = 29,9,9
  Wrong selected font size = 100
  Result font size = 20
  Letters group filename = ../share/coadapt/openvibe-plugins/simple-visualisation/p300-serial-symbols.xml
  Number of feedback color steps = 500
  Feedback color significance level = 0.05
  Feedback color rate = 1.03
