OpenViBE-Scenario
0x8c1fc55b = 1.0
0xf36a1567 = http://openvibe.inria.fr/coadapt-p300-stimulator-tutorial/
0xf6b2e3fa = coadapt-p300-stimulator
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "${CoAdaptP300_Channels}"
  Channel List = ${CoAdaptP300_Channels}
  Action = Select
  Channel Matching Method = Name
-> 0xc67a01dc Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/simple-keyboard-to-stimulations.txt
  TCP Tagging Host address =
  TCP Tagging Host port = 15361
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
