OpenViBE-Scenario
0x8c1fc55b = 1.0
0xf36a1567 = http://openvibe.inria.fr/coadapt-p300-stimulator-tutorial/
0xf6b2e3fa = coadapt-p300-stimulator
0xf8034a49 = INRIA
Comment
  Online, the stimulator writes
  the indexes of the prediction
  to the tagger and this is written
  into the file via acquisition server.
  By reading these
  (if you use the exact same keyboard layout)
  you will be able to see the feedback the subject saw.
  Since the pipeline is different you get
  the feedback a little later.
Comment
  This branch shows you the
  target/non-target discrimination
  on the spatial filters

Generic stream reader => #0
  Filename = ${CoAdaptP300_TrainFile}
#0.Output stream 2 -> 0xc67a01dc Channel Selector "${CoAdaptP300_Channels}"
  Channel List = ${CoAdaptP300_Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/${CoAdaptP300_paramFile}-spatial-filter.cfg
  0xac367a9c = 68
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 191
#5.Epoched signal -> Epoch variance => #6
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 192
#7.Epoched signal -> Epoch variance => #8
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.05
Trigger=#0.Output stream 3, ERP1=#6.Averaged epochs, Variance1=#6.Confidence bounds, ERP2=#8.Averaged epochs, Variance2=#8.Confidence bounds -> ERP plot
  Filename final figure = ${Path_Data}/scenarios/signals/${CoAdaptP300_SubjectName}/p300_${SubjectName}_$core{date}_$core{time}.png
  Trigger to save figure = 182
  Line color 1 = 15,81,13
  Line label 1 = target
  Line color 2 = 87,14,14
  Line label 2 = non-target
New input=#0.Output stream 3 -> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/simple-keyboard-to-stimulations.txt
  TCP Tagging Host address =
  TCP Tagging Host port = 15361
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
