OpenViBE-Scenario
0x8c1fc55b = 1.0
0xf36a1567 = http://openvibe.inria.fr/p300-with-external-stimulator-tutorial/
0xf6b2e3fa = p300-with-external-stimulator
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = ${CoAdaptP300_TrainFile}
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #4
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = 191
Stimulations=#0.Output stream 3, Session signal=#3, Evoked potential epochs=#4.Epoched signal -> 0xc67a01dc xDAWN Spatial Filter Trainer
  Train stimulation = 182
  Spatial filter configuration = ${Player_ScenarioDirectory}/${CoAdaptP300_paramFile}-spatial-filter.cfg
  Filter dimension = 3
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
