OpenViBE-Scenario
Comment
  This is the default scenario that should be used with
   the external p300 stimulator and the python front
  end. It can be used for both calibration (
  in this case dummy spatial filters and classifer
  are used), for copy and free spelling. A static classifier
  is used, nothing is adapted, but it can stop early.
Comment
  Temporal filtering and spatial filtering is done before epoching.
  Epochs are extracted based on the stimulation
  identifier 195 (corresponding to a flash). The
  stimulation based file reader will read a text file
  containing lines with zeros and ones. Each line
  defines which symbols have been flashed during a
  flash. The classifier outputs the probability for each flash.
  This probability is then combined by the python
  script with the info about the symbols being flashed.
  The evidence accumulator then computes the
  probabilities for each symbol and outputs the most
  probable one when a certain threshold is reached.
  This result is written in shared memory which is read
  by the p300 stimulator

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${__volatile_ScenarioDir}/${paramFile}-spatial-filter.cfg
  0xac367a9c = 68
Input signal=#4, Input stimulations=#0.Stimulations -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#5.Epoched signal -> Feature aggregator
  0xac367a9c = 26
-> Classifier processor => #7
  Classifier to use = Probabilistic LDA
  Filename to load configuration from = ${__volatile_ScenarioDir}/${paramFile}-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
  0xac367a9c = 45
#7.Classification state -> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> 0xc67a01dc Generic stream writer
  Filename = ${__volatile_ScenarioDir}/signals/${SubjectName}/${SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> Identity
  0xac367a9c = 65
-> Player Controller
  Stimulation name = 182
  Action to perform = Stop
