OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  This is the default scenario that should be used with
   the external p300 stimulator and the python front
  end. It can be used for both calibration (
  in this case dummy spatial filters and classifer
  are used), for copy and free spelling. A static classifier
  is used, nothing is adapted, but it can stop early.
Comment
  Temporal filtering and spatial filtering is done before epoching.
  Epochs are extracted based on the stimulation
  identifier 195 (corresponding to a flash). The
  stimulation based file reader will read a text file
  containing lines with zeros and ones. Each line
  defines which symbols have been flashed during a
  flash. The classifier outputs the probability for each flash.
  This probability is then combined by the python
  script with the info about the symbols being flashed.
  The evidence accumulator then computes the
  probabilities for each symbol and outputs the most
  probable one when a certain threshold is reached.
  This result is written in shared memory which is read
  by the p300 stimulator

Generic stream reader => #0
  Filename = ${File}
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Location}/p300-spatial-filter.cfg
  0xac367a9c = 68
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
-> Feature aggregator
  0xac367a9c = 26
-> Classifier processor => #6
  Classifier to use = Probabilistic LDA
  Filename to load configuration from = ${Location}/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
  0xac367a9c = 45
#6.Classification state -> 0xc73e83ec Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Output stream 3 -> 0xc73e83ec Stimulation listener
  Log level to use = Fatal error
#0.Output stream 3 -> Identity
  0xac367a9c = 65
-> Player Controller
  Stimulation name = 182
  Action to perform = Stop
Signal=#0.Output stream 2, Stimulations=#0.Output stream 3 -> 0xc73e83ec Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
New input[1]=#0.Output stream 3 -> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
