OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.2.99)
Comment
  Do not forget to look at the python scripts used
  in all of the python boxes in this scenario.
Comment
  Warning

  For the time being multiprocessing and pygame only work
  on Linux operating system provided you have installed pygame module in Python.
Comment
  Multiprocessing

  Creates a new processus
  which works in the background.
Comment
  Moving Circle and Starfield

  These two scripts illustrate running
  several instances of pygame at
  the same time.

Multiprocessing
  Clock frequency (Hz) = 4
  Script = ${Player_ScenarioDirectory}/scripts/python-multiprocessing.py

Moving circle
  Clock frequency (Hz) = 4
  Script = ${Player_ScenarioDirectory}/scripts/python-moving-circle.py

Star field
  Clock frequency (Hz) = 4
  Script = ${Player_ScenarioDirectory}/scripts/python-star-field.py
