OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=2.0.0)
0x4c536d0a = /home/ceriou/workspace/wip-ceriou-openvibe20-fix-build/openvibe/contrib/plugins/processing/python/box-tutorials/python/python-sinus-oscillator.xml
Comment
  Do not forget to look at the python scripts used
  in all of the python boxes in this scenario.
Comment
  This scenario illustrates several user cases of the Python Scripting Box

  Three boxes are used:

  - Sinus generator : generates signal
  - Clock stimulator : generates stimulations
  - Mean : transforms signal

  Note: This tutorial needs the numpy package
  installed for your Python distribution!
Comment
  Sinus generator

  This script generates a sine wave.
Comment
  Mean

  This script calculates the mean of
  all of the channels in a signal.

  It describes the use of the
  numpy python library.
Comment
  Spectra are displayed to better compare the generated results
Comment
  Clock stimulator

  This script generates stimulations
  every time it is triggered.

  It illustrates the use of
  Clock Frequency parameter.

Sinus generator => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/python-sinus-oscillator.py
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Mean => #1
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #3
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#3.Amplitude -> Mean spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#0 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #6
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#6.Amplitude -> Sinus spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Clock stimulator => #8
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/python-clock-stimulator.py
  Stimulation = OVTK_StimulationId_Label_00
Data=#1, Stimulations=#8 -> Signal display "Mean"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#0, Stimulations=#8 -> Signal display "Sinus"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
