OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = ICA example
0xf8034a49 = Inria
Comment
  ICA decomposition example

  The scenario produces uniform random noise
  signal and a low-frequency sine wave signal.
  These are combined as a+b and a-b to form
  two mixed channels.

  This signal is then decomposed by FastICA,
  result visible after 10s.

  The ICA box first collects 10s of data, then estimates
  the decomposition, which is subsequently used
  on the incoming signal.
Comment
  Note that the ICA will output the
  channels as-are before the model is
  estimated (10 seconds in this case).
  If you wish to decompose
  your whole signal, store the decomposition
  matrix from the ICA and use it in another
  scenario with the spatial filter box.
Comment
  The last display changes as the Signal Display autoscaling
  reacts to the changed dynamic range of the input.
  The other two displays are configured to fixed scale.

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(a*M_PI)
Noise generator => #2
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input - A=#1, Input - B=#2 -> Simple DSP => #3
  Equation = a-b
Input 1=#1, Input 2=#2 -> Signal Merger => #4
Data=#4 -> Signal display "Original signals"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 3
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input - A=#1, Input - B=#2 -> Simple DSP => #6
  Equation = a+b
Input 1=#6, Input 2=#3 -> Signal Merger => #7
-> Independent Component Analysis (FastICA) => #8
  Number of components to extract = 2
  Operating mode = ICA
  Sample size (seconds) for estimation = 10
  Decomposition type = Symmetric
  Max number of reps for the ICA convergence = 100000
  Fine tuning = true
  Max number of reps for the fine tuning = 100
  Used nonlinearity = Tanh
  Internal Mu parameter for FastICA = 1.0
  Internal Epsilon parameter for FastICA = 0.0001
  Spatial filter filename =
  Save the spatial filter/demixing matrix = false
Data=#8 -> Signal display "Separated signals"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#7 -> Signal display "Mixed signals"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 3
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
