OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = PCA example
0xf8034a49 = Inria
Comment
  PCA decomposition example

  In the source, the channels have non-ordered, uneven variances.

  The channels are then blended by the mixer.

  This signal is then decomposed by
  Principal Components Analysis
  as provided by the FastICA box.

  In the PCA result, the channels should have
  increasing variance, visible after 10s.

  If the transform is changed to Whiten (not shown)
  the PCA channels will be scaled to equal variance.
  Its sometimes said the data is 'sphered' and 'decorrelated'.

  Observe that the transform does not recover the
  original channels exactly, although there is some resemblance
  (visible if you change the display scaling to 'Per Channel').

Noise generator
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = 1*(x-0.5)
Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #3
  Equation = 2*sin(a*M_PI*17)
Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #5
  Equation = 0.5*sin(a*M_PI*1+1)
Input 1=#1, Input 2=#3, Input 3=#5 -> Signal Merger => #6
-> Spatial Filter "Mixer" => #7
  Spatial Filter Coefficients = 1;0.25;-0.3;0.4;1;-0.8;0.7;-0.4;1
  Number of Output Channels = 3
  Number of Input Channels = 3
  Filter matrix file =
Data=#7 -> Signal display "Mixed signals"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 3
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#7 -> 0xc67a01dc PCA => #9
  Number of components to extract = 3
  Operating mode = PCA
  Sample size (seconds) for estimation = 10
  Decomposition type = Symmetric
  Max number of reps for the ICA convergence = 100000
  Fine tuning = true
  Max number of reps for the fine tuning = 100
  Used nonlinearity = Tanh
  Internal Mu parameter for FastICA = 1.0
  Internal Epsilon parameter for FastICA = 0.0001
  Spatial filter filename =
  Save the spatial filter/demixing matrix = false
Data=#9 -> Signal display "Principal components"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 3
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#6 -> Signal display "Original signals"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 3
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
