OpenViBE-Scenario
Comment
  This is the classifier train scenario used at the
  hospital

Generic stream reader => #0
  Filename = ${TrainFile}
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-spatial-filter.cfg
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = 191
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection" => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = 192
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#0.Output stream 3, Features for class 1=#7, Features for class 2=#10 -> Classifier trainer
  Classifier to use = Probabilistic LDA
  Filename to save configuration to = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-classifier.cfg
  Train trigger = 182
  Number of partitions for k-fold test = 20
  Shrinkage = Shrink to diagonal
  Lambda = 0.5
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
