OpenViBE-Scenario
Comment
  This is the same scenario as the
  p300-speller-4-online-subject-independent-with-lda-init.xml
  scenario except it does not train a classifier and spatial
  filter when 10 symbols have been selected

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = ${Channels}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.500000
  0xac367a9c = 39
-> Signal Decimation => #3
  Decimation factor = 4
Input signal=#3, Input stimulations=#0.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = 195
#4.Epoched signal -> Multiple Spatial Filters
  Filename to load spatial filters from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/multiple-spatial-filters.cfg
-> Feature aggregator
  0xac367a9c = 26
-> 0xc67a01dc Mixture of Experts classifier => #7
  Classifier to use = Mixture of Experts
  Filename to load configuration from = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/${paramFile}-moe-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = 191
  Class 2 label = 192
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Path_Samples_CoAdapt}/signals/${SubjectName}/${SubjectName}-${AcquisitionMode}-${SessionID}_$core{date}_$core{time}.ov
  Use compression = true
#0.Stimulations -> File reader => #9
  FileName = ${FlashGroupDefinitionFile}
  ReadTrigger = 183
  Incremental = true
New input[0]=#7.Classification state, New input[1]=#9, New input[2]=#0.Stimulations -> Python scripting => #10
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/apply-vector-mask.py
  ResetTrigger = 193
Trigger=#0.Stimulations, Evidence=#10 -> EvidenceAccumulator => #11
  ActivationTrigger = OVTK_GDF_Artifact_EOG_Large
  EvidenceAlgorithm = Counter
  StimulationLabelBase = OVTK_GDF_Artifact_EOG_Large
  EarlyStopping = false
  StopCondition = 0.0
  InputType = Distance to hyperplane
  0x8d21ff41 = ${Path_Samples_CoAdapt}/bci/p300-external-stimulator/p300-evidence-accumulator_v2.cfg
#11.Class label -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0
  Stimulation range end = 180
-> SharedMemoryWriter
  SharedMemoryName = SharedMemory_P300Stimulator
#0.Stimulations -> Player Controller
  Stimulation name = 182
  Action to perform = Stop
