OpenViBE-Scenario

Sinus oscillator
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 32
-> Time based epoching => #1
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
Sinus oscillator
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 32
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
input1=#1, input2=#3 -> Two-sample t-test
-> Python scripting
  Clock frequency (Hz) = 64
  Script = ${Path_Samples_CoAdapt}/bci/p300-serial-speller/likeliness_distributor.py
  index = 23
  number = 26
