OpenViBE-Scenario
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = Classification testing example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  This is a test scenario corresponding to
  classification-0-training.xml

  Please run the training scenario first.

  Fresh data is drawn from the same distribution
  that was used in the training and is sent
  to the classifier.

  Note that since the data is freshly sampled,
  it was never used in training. Hence, the accuracy
  estimate should be unbiased in this scenario.
Comment
  The lua stimulator generates a timeline
  specifying 10 seconds of data from each class.
  The stimuli control stream switch, which routes
  the uniform random data to class-specific
  transformations.
Comment
  The classification accuracy is measured
  by the Confusion Matrix box.

  When the classification is good,
  the accuracies on the diagonal
  are the highest.

  The 'No Target available' warning is normal,
  it means that in the scenario, the confusion
  matrix gets some predictions from the classifier
  before it has received the corresponding target
  from the lua chain.

Noise generator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 64
-> Simple DSP => #1
  Equation = (x+1)*10
Lua Stimulator => #2
  Lua Script = ${Player_ScenarioDirectory}/classification-1-testing.lua
Triggers=#2, Matrix=#1 -> Stream Switch => #3
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
#3.Output[0] -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0; 0;0.95;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
-> Signal average => #5
-> Feature aggregator => #6
#3.Output[1] -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;1;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
-> Signal average => #8
-> Feature aggregator => #9
#3.New output -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;0.95;0;0; 0;0;1;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
-> Signal average => #11
Input 1=#5, Input 2=#8, Input 3=#11 -> 0xc73e83ec Signal Merger => #12
Signal=#12 -> 0xc73e83ec Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#11 -> Feature aggregator => #14
Input stream 1=#6, Input stream 2=#9, Input stream 3=#14 -> Streamed matrix multiplexer
-> Classifier processor => #16
  Filename to load configuration from = ${Path_UserData}/classification-training-tutorial-model.xml
Signal=#0, Stimulations=#16.Labels -> 0xc73e83ec Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#16.Labels -> 0xc73e83ec Stimulation listener
  Log level to use = Information
#2 -> 0xc73e83ec Stimulation listener
  Log level to use = Information
#2 -> Stimulation Filter => #20
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_0F
Targets=#20, Classification results=#16.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
  Class 3 = OVTK_StimulationId_Label_03
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
