OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = Classification testing example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  This is a test scenario illustrating
  basic incremental online learning.

  Data is classified with the learned model,
  and the model is repeatedly updated during
  the session.

  Note that the classifier in principle
  shouldn't be used with the data that
  has been used for its estimation
  (overfitting). Here when the 'reload model'
  is received by the processor, the previous
  classifier has - verify - already processed
  all the features received so far.
Comment
  The lua stimulator generates a timeline
  specifying 4 seconds of data from each class,
  the sources alternating during 48 sec.

  The stimuli in the timeline control stream switch,
  which routes the uniform random data to class-specific
  transformations.
Comment
  The Clock Stimulator tells the
  Classifier Trainer to estimate a
  new classifier every 2s with all
  the so-far accumulted data.
Comment
  The classification accuracy is measured
  by the Confusion Matrix box.

  When the classification is good,
  the accuracies on the diagonal
  are the highest.

  The 'No Target available' warning is normal,
  it means that in the scenario, the confusion
  matrix gets some predictions from the classifier
  before it has received the corresponding target
  from the lua chain.

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 64
-> Simple DSP => #1
  Equation = (x+1)*10
Lua Stimulator => #2
  Lua Script = ${Player_ScenarioDirectory}/classification-2-incremental.lua
Triggers=#2, Matrix=#1 -> Stream Switch => #3
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
#3.Output[0] -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0; 0;0.95;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #6
#3.Output[1] -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;1;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #9
#3.New output -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;0.95;0;0; 0;0;1;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #12
Input stream 1=#6, Input stream 2=#9, Input stream 3=#12 -> Streamed matrix multiplexer => #13
#2 -> Stimulation Filter => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_0F
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Clock stimulator => #16
  Interstimulation interval (in sec) = 2.0
  Stimulation = OVTK_StimulationId_Train
Stimulations=#16, Features for class 1=#6, Features for class 2=#9, Features for class 3=#12 -> Classifier trainer => #17
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/classification-2-incremental.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 0
  Balance classes = true
Features=#13, Commands=#17 -> Classifier processor => #18
  Filename to load configuration from = ${Player_ScenarioDirectory}/classification-2-incremental.cfg
Targets=#14, Classification results=#18.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
  Class 3 = OVTK_StimulationId_Label_03
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
