OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)

Generic stream reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 2 -> Target Separator => #2
  Lua Script = ${__volatile_ScenarioDir}/scripts/classifier-training-target-separator.lua
  Targets = 0 1 2 3
  Non Targets = 4
  Output Stimulation = OVTK_StimulationId_Target
#1.Output stream 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 1 -> Temporal filter "Frequency 2" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/temporal-filter-freq-2.cfg
Input signal=#4, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #9
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter "Frequency 2" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/temporal-filter-freq-3.cfg
Input signal=#10, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #15
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter "Frequency 1" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/temporal-filter-freq-1.cfg
Input signal=#16, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #21
  Equation = log(1+x)
Input stream 1=#21, Input stream 2=#9, Input stream 3=#15 -> Feature aggregator => #22
Features=#22 -> Classifier processor
  Filename to load configuration from = ${__volatile_ScenarioDir}/classifiers/multiclass.xml
