OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)

Generic stream reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 2 -> Target Separator => #2
  Lua Script = ${__volatile_ScenarioDir}/scripts/classifier-training-target-separator.lua
  Targets = 0 1 2 3
  Non Targets = 4
  Output Stimulation = OVTK_StimulationId_Target
#1.Output stream 1 -> Temporal filter "Frequency 2" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/temporal-filter-freq-2.cfg
Input signal=#3, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.00
  Epoch offset (in sec) = 1.00
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #8
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter "Frequency 2" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/temporal-filter-freq-3.cfg
Input signal=#9, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.00
  Epoch offset (in sec) = 1.00
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #14
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter "Frequency 1" => #15
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/temporal-filter-freq-1.cfg
Input signal=#15, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.00
  Epoch offset (in sec) = 1.00
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${__volatile_ScenarioDir}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #20
  Equation = log(1+x)
Input stream 1=#20, Input stream 2=#8, Input stream 3=#14 -> Feature aggregator => #21
Input stream 1=#1.Output stream 2, Input stream 2=#21 -> Identity => #22
Triggers=#22.Output stream 1, Matrix=#22.Output stream 2 -> Stream Switch => #23
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
  Switch stim for output 3 = OVTK_StimulationId_Label_02
  Switch stim for output 4 = OVTK_StimulationId_Label_03
Stimulations=#1.Output stream 2, Features for class 1=#23.Output[1], Features for class 2=#23.New output[2], Features for class 3=#23.New output[3] -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${__volatile_ScenarioDir}/classifiers/multiclass.xml
  Multiclass strategy to apply = OneVsOne
  Pairwise Decision Strategy = PKPD
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 1
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 3
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
