OpenViBE-Scenario
Comment
  This box second setting (the integer Factor) is
   marked as a modifiable parameter. It means
   that during run, a widget will appear where
   you can modify the value of this integer. As
  you do that, you will notice that the
  amplitude of the signal will vary accordingly.
Comment
  Note : the box also send the stimulation
   GDF_Incorrect each time the setting change

Sinus oscillator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> ModUI => #1
  Stimulation = OVTK_GDF_Incorrect
  Int = 1
Signal=#1.output, Stimulations=#1.stims -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
