OpenViBE-Scenario
0x790d75b8 = Loic Mahe
0x8c1fc55b = 1.0
0x9f5c4075 = Messaging example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  This scenario shows the message capabilies. Boxes can exchange messages.
Comment
  You can modify the frequency
  at which the Message Sender
  box sends messages
Comment
  You can add, remove and change
  the names of message inputs
  on the Message Spy box
  and of message outputs on the
  Message Sender box. Right click
  on a box to access the menu
Comment
  You can add settings as long as
  they are integers floats or strings.
  If you change an existing setting
  to a type different from those
  mentioned, the setting will be
  removed. The settings will be
  used to fill the message.
Comment
  Message Spy will print all
  content of the message
  to the console.
Comment
  Message Receiver box only prints the values
  related to a few fixed keys. It is an example.
  Try connecting to it.

Message Sender => #0
  Frequency = 1
  Append test matrix = true
  Meaning of life = 42
  Another number = 502
  Pi = 3.1415
  Quote = Thank you for all the fish
MessageLink=#0 -> Message Spy
  LogLevel = Information

Message Receiver
