OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Loic Mahe
0x8c1fc55b = 1.0
0x9f5c4075 = Modifiable Temporal filter example
0xf36a1567 = http://openvibe.inria.fr/modifiable-box-settings/
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The modifiable temporal filter box is a duplicate
  of the original temporal filter box with all settings
  marked as modifiables.
  It means that during run, a widget will appear where
   you can modify the value of these settings. As
  you do that, you will notice that the signal will
   change accordingly.

Sinus oscillator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Modifiable Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#1 -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
