OpenViBE-Scenario
Comment
  The modifiable temporal filter box is a duplicate
  of the original temporal filter box with all settings
  marked as modifiables.
  It means that during run, a widget will appear where
   you can modify the value of these settings. As
  you do that, you will notice that the signal will
   change accordingly.

Sinus oscillator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Modifiable Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Signal=#1 -> 0xc67a01dc Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 100
