OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Stream reading example
0xf8034a49 = Inria
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Signal Display box displays
  the content of the file.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
Data=#0.Output stream 2, Stimulations=#0.Output stream 3, Channel Units=#0.Output stream 4 -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
