OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  This scenario illustrates the Signal Concatenation box.

  This box reads two or more streams, inserting the streams one
  after another (from left to right, considering the input connectors).
  Hence, the output stream will have the summed length of the
  original signals.

  Note that the catenated streams must have the same
  characteristics, such as sampling rate and number of channels.

  The GDF file writer box writes the resulting file under
  $APPDATA/openvibe/ on Windows and $HOME/.config/openvibe/ on Linux,
  as the setting token ${UserData} will be expanded to this path.

  Finally, Player Controller stops the scenario playback
  after Signal Concatenation is finished.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

GDF file reader => #0
  Filename = ${Path_Data}/scenarios/signals/spaceship-freetime.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
0xc67a01dc GDF file reader => #1
  Filename = ${Path_Data}/scenarios/signals/spaceship-freetime.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
Input signal 1=#0.EEG stream, Input stimulations 1=#0.Stimulations, Input signal 2=#1.EEG stream, Input stimulations 2=#1.Stimulations -> Signal Concatenation => #2
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop
Experiment information=#0.Experiment information, Signal=#2.Signal, Stimulation=#2.Stimulations -> GDF file writer
  Filename = ${Path_UserData}/spaceship-freetime-doubled.gdf
#2.Status -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
