OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  The documentation page for this tutorial is available at:
  openvibe.inria.fr/tutorial-using-matlab-with-openvibe
Comment
  Configure the Matlab Scripting box:

   Set the matlab executable path before use !

  Enter the path to your local Matlab installation.

  You can choose the Stimulation trigger
  that will set all input samples to 0

Sinus oscillator => #0
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 16
Data=#0 -> Signal display "Raw signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Press 'a' to set all samples to 0 => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal input=#0, Trigger=#2 -> Tuto 1 : Signal filter => #3
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2011b/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = tuto1_signal_filter_Initialize
  Process function = tuto1_signal_filter_Process
  Uninitialize function = tuto1_signal_filter_Uninitialize
  Zero trigger = OVTK_StimulationId_Label_01
Data=#3 -> 0xc67a01dc Signal display "Matlab output"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
