OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  The documentation page for this tutorial is available at:
  openvibe.inria.fr/tutorial-using-matlab-with-openvibe
Comment
  We extract a 2 seconds window
  every 2 seconds
Comment
  Configure the Matlab Scripting box:

   Set the matlab executable path
  and the working directory before use !

  If you want to add a sinusoid noise to the signal
  set the noise frequency and amplitude.
  Amplitude to 0 results in no noise.

  Set the frequency range for the plot scale.
Comment
  The signal display boxes prints
  on a 2 seconds horizontal scale

Generic stream reader
  Filename = ${Path_Data}/scenarios/signals/bci-ssvep-training.ov
-> Channel Selector "1" => #1
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 2
-> Tuto2 : FFT => #3
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2011b/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = tuto2_FFT_filter_Initialize
  Process function = tuto2_FFT_filter_Process
  Uninitialize function = tuto2_FFT_filter_Uninitialize
  Noise frequency = 20
  Noise amplitude = 10
  Plot range : min frequency = 5
  Plot range : max frequency = 50
Data=#3 -> Signal display "Corrupted signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#1 -> Signal display "Raw signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
