OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  The documentation page for this tutorial is available at:
  openvibe.inria.fr/tutorial-using-matlab-with-openvibe
Comment
  Configure the Matlab Scripting box:

   Set the matlab executable path
  and the working directory before use !

  You can select the number of channels
   and size of data chunk.
  Sampling frequency = box clock freqeuncy * samples per block

  The box generates one sinus signal per channel
  with frequency
  F(channel i) = 10 * i Hz

  The box sends one stimulation per second

Tuto 3 : sinus generator => #0
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2011b/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = tuto3_sinus_generator_Initialize
  Process function = tuto3_sinus_generator_Process
  Uninitialize function = tuto3_sinus_generator_Uninitialize
  Channel count = 4
  Samples per buffer = 16
  Amplitude = 5
  Stimulation = OVTK_StimulationId_Label_01
Data=#0.New output[0], Stimulations=#0.New output[1] -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
