OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Channel Selector tutorial
0xf8034a49 = Inria
Comment
  The Sinus Oscillator box generates
  a 4 channels sinusoidal signal
Comment
  Those 4 channels are displayed with the left
  Signal Display box
Comment
  The Channel Selector box takes only
  the first and fourth channels
  (channel names are 0 indexed)
Comment
  Finally, the right Signal Display box
  displays the 2 selected channels
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Data=#0 -> Signal display "Before"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Channel Selector "1;4" => #2
  Channel List = 1;4
  Action = Select
  Channel Matching Method = Smart
Data=#2 -> 0xc67a01dc Signal display "After"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
