OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  This scenario illustrates measuring the connectivity of signals,
  by computing the Magnitude Squared Coherence, between two channels.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every second.

  In this case this box is used to make bigger sets of data
  to send in input of connectivity box,  the processing is more meaningful
  on bigger sets than on the defaults chunk of 32 samples.

  The blocks can be overlapping as well to make it a moving window.
Comment
  The Connectivity Measure box returns :
   -  the Coherence  at each frequencies between  two specified channels.
  - the mean Coherence  over all the frequency as a function of time.

  The welch's method is computed with the Welch window, segments of
   256 samples and an overlap of 50 % (128 samples).

  You can select the box and press F1 to access
  its online documentation.

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #2
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
Data=#2 -> Signal display "Input signal 1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 1 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
Data=#5 -> Signal display "Input signal 2"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
EEG Signal=#2, New input=#5 -> Connectivity Measure => #7
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-1
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 256
Data=#7.Mean coherence signal -> Signal display "Mean coherence signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#7.Coherence spectrum -> Coherence spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
