OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x4c536d0a = /home/ceriou/workspace/wip-ceriou-openvibe20-fix-build/openvibe/plugins/processing/signal-processing/box-tutorials/connectivity-magnitude-squared-coherence.xml
Comment
  This scenario illustrates measuring the connectivity of signals,
  by computing the Magnitude Squared Coherence, between two sinus signals:
  one is a simple sinus at a frequency of 50 Hz
  and the other is the same signal when sin(x)>0
  and is the constant 1 otherwise.
Comment
  The Time signal box
  combined with Simple DSP  allows to
  generate any signal wanted
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every second.

  In this case this box is used to make bigger sets of data
  to send in input of connectivity box,  the processing is more meaningful
  on bigger sets than on the defaults chunk of 32 samples.

  The blocks can be overlapping as well to make it a moving window.
Comment
  The Connectivity Measure box returns :
   -  the Coherence  at each frequencies between  two specified channels.
  - the mean Coherence  over all the frequency as a function of time.

  The welch's method is computed with the Welch window, segments of
   256 samples and an overlap of 50 % (128 samples).

  You can select the box and press F1 to access
  its online documentation.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "Sinus f = 50Hz"
  Equation = sin(50*2*M_PI*x)
-> Time based epoching => #2
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
Data=#2 -> Signal display "Input signal 1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Simple DSP "Sinus f = 50Hz if sin(X)>0, else 1"
  Equation = sin(a) > 0 ? sin(50*2*M_PI*a) : 1
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
Data=#5 -> Signal display "Input signal 2"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
EEG Signal=#2, New input=#5 -> Connectivity Measure => #7
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-1
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 256
Data=#7.Mean coherence signal -> Signal display "Mean coherence signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#7.Coherence spectrum -> Coherence spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
