OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Alison Cellard
0x8c1fc55b = 1.0
0x9f5c4075 = Phase Locking Value with FFT
0xf8034a49 = Inria
Comment
  The Sinus Oscillator box
  generate a 4-channels signal.
Comment
  This scenario illustrates measuring the connectivity of signals,
  by computing the Single-trial Phase-Locking Value ,
  between two pairs of sinus signals in a specific frequency band.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every second.

  In this case this box is used to make bigger sets of data
  to send in input of connectivity box,  the processing is more meaningful
  on bigger sets than on the defaults chunk of 32 samples.

  The blocks can be overlapping as well to make it a moving window.
Comment
  Apply a Hamming window to the data
Comment
  The Spectral analysis box
  does Fast Fourier Transform to go to frequency domain.
Comment
  To filter the data, the Fast Fourier Transform  is used because it
  doesn't modify the phase, which is the important
  information in the Single-Trial Phase-Locking Value analysis.

  This is not the case with IIR filters, so they should not be used with S-PLV.
Comment
  Then, specific frequency bands can be selected
  with the Frequency Band Selector box.
Comment
  The IFFT box does Inverse Fast Fourier Transform
  to go back to time domain.
Comment
  The Connectivity Measure box
  returns the Single-Trial Phase-Locking value
  between specified pairs of channels.

  The different pairs can be specified in the box settings.
  Here, we measure the S-PLV between channel 1 and channel 2
  and between channel 3 and channel 4..

  You can select the box and press F1 to access
  its online documentation.

Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Windowing functions
  Window method = Hamming
-> Spectral analysis => #3
  Amplitude = false
  Phase = false
  Real Part = true
  Imaginary Part = true
#3.Real Part -> Frequency Band Selector => #4
  Frequencies to select = 48-52
#3.Imag Part -> Frequency Band Selector => #5
  Frequencies to select = 48-52
real part=#4, imaginary part=#5 -> IFFT box
-> Connectivity Measure => #7
  Method = Single-Trial Phase Locking Value
  Pairs of channels = 1-2;3-4
  Channel Matching Method = Smart
Data=#7 -> 0xc67a01dc Signal display "S-PLV signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#7 -> Matrix Display "S-PLV Value"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#0 -> Signal display "Input signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
