OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Alison Cellard
0x8c1fc55b = 1.0
0x9f5c4075 = Phase locking value example
0xf8034a49 = Inria
Comment
  The Time signal box
  combined with Simple DSP  allows to
  generate any signal wanted
Comment
  This scenario illustrates measuring the connectivity of signals,
  by computing the Single-trial Phase-Locking Value , between two sinus signals:
  one is a simple sinus at a frequency of 50 Hz
  and the other is the same signal when sin(x)>0
  and is the time signal otherwise.

  You also can compare channels in different frequency bands
  thanks to the spectral analysis  boxes and  frequency band selector .
  See connectivity-phase-locking-value-fft-filter.xml tutorial scenario for an example.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every second.

  In this case this box is used to make bigger sets of data
  to send in input of connectivity box,  the processing is more meaningful
  on bigger sets than on the defaults chunk of 32 samples.

  The blocks can be overlapping as well to make it a moving window.
Comment
  Apply a Hamming window to the data
Comment
  The Connectivity Measure box
  returns the Single-Trial Phase-Locking value
  between two specified channels.

  Here, two inputs are used to show that the analysis can be done
  on two different frequency bands.

  To process the S-PLV on two channels of the same signal
  and in the same frequency band, only one input is needed.

  You can select the box and press F1 to access
  its online documentation.
Comment
  The result can be displayed as a signal or as a matrix.

  When sin(X)> 0 the inputs are the same,
  thus S-PLV is close to 1, otherwise the S-PLV is close to 0.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "Sinus f = 50Hz"
  Equation = sin(50*2*M_PI*x)
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Windowing functions => #3
  Window method = Hamming
Input - A=#0, Input - B=#0 -> Simple DSP "Sinus f = 50Hz if sin(X)>0, Time signal else"
  Equation = sin(a) > 0 ? sin(50*2*M_PI*a) : 1
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Windowing functions => #6
  Window method = Hamming
EEG Signal=#3, New input=#6 -> Connectivity Measure => #7
  Method = Single-Trial Phase Locking Value
  Pairs of channels = 1-1
  Channel Matching Method = Smart
Data=#7 -> 0xc67a01dc Signal display "S-PLV Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#7 -> Matrix Display "S-PLV Value"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
