OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = EOG: Calibration
0xf8034a49 = Inria
Comment
  This scenario performs denoising following
  the work of Schlögl and al., 2007.

  The model should be first calibrated using
  the 'eog-calibration.xml' scenario.

  EOG Denoising box uses the estimated model
  and attempts to clean the EEG input of artifacts.

GDF file reader => #0
  Filename = ${Path_Data}/scenarios/signals/eog-artifact.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "EEG" => #2
  Channel List = 1:4
  Action = Reject
  Channel Matching Method = Smart
Data=#2 -> Signal display "Before"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Channel Selector "EOG" => #4
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
EEG=#2, EOG=#4 -> EOG Denoising => #5
  Filename b Matrix = ${Player_ScenarioDirectory}/b-Matrix-EEG.cfg
Data=#5 -> 0xc67a01dc Signal display "After"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
