OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Alison Cellard
0x8c1fc55b = 1.0
0x9f5c4075 = Hilbert Transform example
0xf8034a49 = Inria
Comment
  The Hilbert transform computes Hilbert transform,
  instantaneous phase and envelope on input signal
  using analytic signal representation
Comment
  The Time signal is a sample box
  that generates a constant increasing signal
Comment
  The Simple DSP box is used to
  create a modulated signal
Comment
  Compute Hilbert transform
  on the modulated signal
Comment
  Display results
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "cos(100*x)*(4*cos(2*x)-sin(3*x))" => #1
  Equation = cos(100*x)*(4*cos(2*x)-sin(3*x))
Data=#1 -> 0xc67a01dc Signal display "Modulated signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Hilbert Transform => #3
Data=#3.Hilbert Transform -> Signal display "Hilbert signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.Envelope -> Signal display "Envelope"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.Phase -> Signal display "Phase"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
