OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Simple DSP example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Simple DSP box performs
  simple computations on input matrix
  These computations can be logical or
  arithmetical.
Comment
  The Time signal is a sample box
  that generates a constant increasing signal
Comment
  You can use the letter 'X' (or 'x')
   for the first input.

  You can use up to 16 inputs.
  If you are using more than 1 input
  You have to use the letters a to n
  for inputs 1 to 16 respectively.
Comment
  Some simple DSPs using only one input signal
  to perform mathematical operations
Comment
  if-then-else clause
  can be achieved using
  COND ? output-true : output-false
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "y = cos(x)" => #1
  Equation = cos(X)
Data=#1 -> Signal display "Display: y = cos(x)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Simple DSP "y = sin(x)" => #3
  Equation = sin(X)
Data=#3 -> Signal display "Display: y = sin(x)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input - A=#1, Input - B=#3 -> Simple DSP "DSP: a > b ? a : b" => #5
  Equation = a>b?a:b
Data=#5 -> Signal display "Display: y = MAX(cos(x), sin(x))"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input - A=#1, Input - B=#3 -> Simple DSP "DSP: a/b" => #7
  Equation = b/a
Data=#7 -> Signal display "Display: y = sin(x)/cos(x)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Simple DSP "y = x" => #9
  Equation = x
Data=#9 -> Signal display "Display: y = x"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Simple DSP "y = x³" => #11
  Equation = pow(x,3)
Data=#11 -> Signal display "Display: y = x^3"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Simple DSP "y = cos(x) /(x+1)" => #13
  Equation = cos(x)/(x+1)
Data=#13 -> Signal display "Display: y = cos(x)/(x+1)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
