OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = Wavelet example
0xf8034a49 = Inria
Comment
  Wavelet decomposition example

  The scenario produces uniform random noise
  signal which rides on a low-frequency sine-wave
  carrier.

  This signal is decomposed and then reconstructed
  by Discrete Wavelet Transform
  and Inverse DWT boxes.

  Observing the outputs A and D shows that the
  low-frequency part A is now more clean of the
  random noise, some of which is carried now
  in the high-frequency part D. The reconstructed
  signal should closely resemble the original one.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
Noise generator => #1
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input - A=#0, Input - B=#1 -> Simple DSP => #2
  Equation = sin(a*M_PI)+b-0.5
-> Discrete Wavelet Transform => #3
  Wavelet type = haar
  Wavelet decomposition levels = 1
Info=#3.Info, A=#3.A, D1=#3.D1 -> Inverse DWT => #4
  Wavelet type = haar
  Wavelet decomposition levels = 1
Data=#4 -> 0xc67a01dc Signal display "Reconstruction"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.A -> Signal display "A"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.D1 -> Signal display "D"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#2 -> Signal display "Original"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
