OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)

0xc67a01dc GDF file reader => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/real-hand-movements.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Channel Selector
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Hilbert Transform => #2
#2.Hilbert Transform -> CSV File Writer
  Filename = ${Path_Root}/../plugins/processing/signal-processing/test/hilbert_HilbertTransform.csv
  Column separator = ;
  Precision = 10
#2.Envelope -> CSV File Writer
  Filename = ${Path_Root}/../plugins/processing/signal-processing/test/envelope_HilbertTransform.csv
  Column separator = ;
  Precision = 10
#2.Phase -> CSV File Writer
  Filename = ${Path_Root}/../plugins/processing/signal-processing/test/phase_HilbertTransform.csv
  Column separator = ;
  Precision = 10

Clock stimulator
  Interstimulation interval (in sec) = 1.05
  Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
