OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.2)

0xc67a01dc GDF file reader => #0
  Filename = ${Path_Data}/scenarios/signals/real-hand-movements.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Connectivity Measure
  Method = Single-Trial Phase Locking Value
  Pairs of channels = 1-2
  Channel Matching Method = Smart
-> CSV File Writer
  Filename = /home/ac-inria/work/git/openvibe/plugins/processing/signal-processing/test/PhaseLockingValue.csv
  Column separator = ;
  Precision = 10

Clock stimulator
  Interstimulation interval (in sec) = 1.05
  Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
