OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0+git)
Comment
  Credits:

  The few images flashed in this tutorial were
  created by zcool, http://www.zcool.com.cn/.
  Please see 'license.txt'
  in the image folder for details.
Comment
  This scenario illustrates the use of the Display cue image box.

  The box can be configured to display different images when different
  stimulations are received by it. Right after display, the box sends the
  stimulus also as an output, which is printed to the log by
  Stimulation listener in the current scenario.

  During play, when you press 'a' or 'z' with Keyboard stimulator
  window having focus, the cue display should display different images.
  Press 'e' to clear the display.

  You can right-click on the display box and select 'modify settings'
  to add more stimulus/image combinations.

  For time critical applications and precise alignment to the signal,
  the Display Cue Image sends the stimulations to the Acquisition Server
  using TCP Tagging right after rendering. Reading the stimulations
  from the box output directly is not recommended.
Comment
  Unmuting the chain below will show stimulations
  as they come back from the Acquisition Server's
  TCP Tagging module.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
  TCP Tagging Host address =
  TCP Tagging Host port = 15361
-> 0xc67a01dc Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_Label_03
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
  Cue Image 1 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
-> Stimulation listener "Direct (deprecated)"
  Log level to use = Information

0xc73e83ec Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#3.Signal stream, Stimulations=#3.Stimulations -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3.Stimulations -> 0xc73e83ec Stimulation listener "TCP Tagging (recommended)"
  Log level to use = Information
