OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Power Spectrum example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Generic Stream Reader box
  reads an OpenViBE file containing signals.
Comment
  Each channel is referenced against
  channel Nz (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  The Signal Display
  box is just present to
  monitor the input of
  the spectrum
  computation pipeline.

  The Window Manager
  is used to organize the
  two windows correctly !
Comment
  Then the Temporal Filter box
  filters the signal in the [1 128] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  An FFT is applied on each window thanks to the
  Spectral Analisys box.
Comment
  Finally, the Power Spectrum Display
  displays the resuling spectrum.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 128.000000
  Pass band ripple (dB) = 0.500000
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis => #5
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#5.Amplitude -> Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
