OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  This scenario illustrates the Signal Display box.

  For serious use, it is recommended to configure the box to use a scaling
  suitable for your data to get minimal amount of run-time autoscale changes.

  - Very different channel scales: Use per-channel scale
  - All channels similar, scale known: Use global scale
  - Data is well-behaved: Use fixed scale and specify it
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Temporal Filter, filters the input signal
  according to the settings.
  Here we use a Butterworth band-pass.
Comment
  This Signal Display box displays
  the content of the file in a mode where each
  channel is automatically vertically scaled,
  independently of the other channels.

  The red blip in the plot means the scale was changed.
Comment
  This Signal Display box displays
  the content in a fixed, specified scale.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#1, Stimulations=#0.Output stream 3 -> Signal display "Filtered signal (fixed scale)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Generic stream reader => #3
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
Data=#3.Output stream 2, Stimulations=#3.Output stream 3 -> Signal display "Raw signal (autoscale)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
