OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  The Generic Stream Reader box
  reads an OpenViBE file containing signals.
Comment
  Each channel is referenced against
  channel Nz (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  Then the Temporal Filter box
  filters the signal in the beta [16 24] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  Then for each window, the band power is
  computed thanks to the Simple DSP
  box (wich computes squares of each sample) and
  the Signal Average box
  which reduces each window to a single sample for
  each channl : the mean of all the samples
  of this window for this channel.
Comment
  The average beta power is averaged over
  4 estimations thanks to the Epoch
  Average box.
Comment
  Finally, the 2D Topographic Map
  and the 3D Topographic Map
  boxes display the resuling beta power over the scalp
  surface, getting the channel localisation from the
  Electrode Localisation File Reader.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #6
  Averaging type = Moving epoch average
  Epoch count = 4
Electrode localisation file reader => #7
  Filename = ${Path_Data}/electrode_sets/electrode_set_standard_cartesian.txt
Signal=#6, Channel localisation=#7 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center
Signal=#6, Channel localization=#7 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0.000000
