OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  The GDF File Reader box
  reads a GDF file from disk and sends
  its content to the following box.
Comment
  Then the Temporal Filter box
  filters the signal in the beta [16 24] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  Then for each window, the band power is
  computed thanks to the Simple DSP
  box (wich computes squares of each sample) and
  the Signal Average box
  which reduces each window to a single sample for
  each channl : the mean of all the samples
  of this window for this channel.
Comment
  The average beta power is averaged over
  4 estimations thanks to the Epoch
  Average box.
Comment
  A spatial filter is then applied using an
  inverse model matrix. This matrix can be
  computed with algorithms such as sLORETA.
  Note that OpenViBE does not provide the
  tools for computing the matrix.
Comment
  Finally, the Voxel Display box
  shows the activity inside the brain.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

0xc67a01dc GDF file reader => #0
  Filename = ${Path_Data}/scenarios/signals/voxel-display.gdf
  Samples per buffer = 10
  Subtract physical minimum = False
#0.EEG stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spatial Filter "Inverse Model"
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/voxel-display-settings-file.txt
-> Voxel visualizer
  Voxels filename = ${Path_Data}/plugins/simple-visualisation/voxeldisplay/voxel_set_2394.txt
