OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Sign Change Detector example
0xf8034a49 = Inria
Comment
  Sinus oscillator generates 2 channels of signal.
  The signal is filtered for simplification.
Comment
  A DSP box is used in combination with the
  Sign Change Detector to create a threshold detector.
Comment
  The Sign Change Detector takes sends stimulations
  when the signal on selected channel (0 in this case) becomes
  positive or negative.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator
  Channel count = 2
  Sampling frequency = 256
  Generated epoch sample count = 32
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Simple DSP => #2
  Equation = x-1.5
-> 0xc67a01dc Sign Change Detector => #3
  On Stimulation = OVTK_StimulationId_Label_01
  Off Stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
Data=#2, Stimulations=#3 -> Signal display "Sign changes as stimulations"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
