OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0+git)
Comment
  The Keyboard Stimulator box
  sends a specific stimulation when pressing a key.

  In the case of this scenario, key 'a' will start the
  sound loop playback and 'z' will stop it.

  The Keyboard stimulator
  window must have focus when the keys are pressed.
Comment
  The Sound Player box
  plays and stops a sound according to stimulation triggers.
  The sound can be in OGG or WAV format.

  The triggers are passed on after the change
  to Acquisition Server using TCP Tagging
  which is the recommended way to combine
  the stimulation markers with the signal.
Comment
  Unmuting the chain below will show stimulations
  as they come back from the Acquisition Server's
  TCP Tagging module.
Comment
  The Stimulation Listener box
  prints the incoming stimulations to the console.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
  TCP Tagging Host address =
  TCP Tagging Host port = 15361
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_02
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = true
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
-> Stimulation listener "Direct (deprecated)"
  Log level to use = Information

0xc73e83ec Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#3.Signal stream, Stimulations=#3.Stimulations -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3.Stimulations -> 0xc73e83ec Stimulation listener "TCP Tagging (recommended)"
  Log level to use = Information
