OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Stream Switch example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Stream Switch box
  redirects the Streamed Matrix input on a particular output.

  The Stimulation input drives the switch according to
  the settings (one stimulation code per output).
Comment
  The Signal Display boxes display
  the simulated signal.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator => #0
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Sinus oscillator => #1
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Triggers=#0, Matrix=#1 -> 0xc67a01dc Stream Switch => #2
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
Data=#2.Output[0] -> Signal display "Press 'a' to display here"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#2.Output[1] -> Signal display "Press 'z' to display here"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#2.New output -> Signal display "Press 'e' to display here"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
